' Built with assemble.py: 2026-09-30 14:18
' assemble.py -tables dat1min dat15min dat24hr opsMonitor -parts battery cr1000x wind-horiz-1 wind-horiz-2 wind-horiz-3 wind-vert-1 wind-vert-2 wind-vert-3 temp-metone-0 temp-metone-1 temp-metone-2 temp-metone-3 rh-rotronics-0 precip swdn swup lwdn lwup netrad fm1hr fm10hr pressure TA54 -o ta54.cr1x


' =============================
' Wiring information, comments.
' =============================

'  RMYoung 05305-AQ Wind Speed & Direction Sensor (1)
'    1H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P1:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (2)
'    1L:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P2:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (3)
'    2H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P3:  HWspd Signal Red
'
'  RMYoung 27106T Wind Speed Sensor (1)
'    3H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (2)
'    3L:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (3)
'    4H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  MetOne 060A2 Air Temp Sensor(1)
'    5H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 5H
'
'  MetOne 060A2 Air Temp Sensor (2)
'    5L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 5L
'
'  MetOne 060A2 Air Temp Sensor (3)
'    6H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 6H
'
'  MetOne 060A2 Air Temp Sensor (4)
'    6L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 6L
'
'  Rotronics MP101A Air Temp & RH Sensor (constant power)
'    7L:  Air Temperature Siganl Red(Brown)
'    8H:  RH Signal White
'    Ground:  Signal Ground Yellow
'    Ground:  Power Ground Green
'    Ground:  Cable Shield Clear?
'    12V:  Power Blue
'
'  CS100 Barometric Pressure Sensor (constant power)
'    8L:  Baro Signal Out Blue
'    Ground:  Signal Ground Yellow
'    Ground:  Cable Shield Clear
'    5V:  Sensor Enable Green
'    G:  Power Ground Black
'    12V:  Power Red
'
' Eppley PSP1 Precision Spectral Pyranometer (1)*Note: Facing UP (SWDN)
'    9H:  Signal+ Green
'    9L:  Signal- Blue
' *Note: Jumper wire 9L -to- ground
'    Ground:  Cable shield Clear?
' Eppley PSP2 Precision Spectral Pyranometer (2) *Note: Facing DOWN (SWUP)
'    10H:  Signal+ Green
'    10L:  Signal- Blue
' *Note: Jumper wire 10L -to- ground
'    Ground:  Cable shield Clear?
'
' Eppley LWDN Precision Infrared Radiometer (1) *Note: Facing UP (LWDN)
' Solar sensor output
'    11H:  Solar sensor Signal+ Yellow
'    11L:  Solar sensor Signal- Blue
'    11L:  Jumper wire 11L -to- ground
'    Ground:  Cable shield Clear?
' Case temperatre thermistor
'    VX3: Excite *Wire a 1K resistor between VX3 & SE25
'    SE25: Thermistor signal+, White
'    Ground: Thermistor signal-, Black
' Dome temperature thermistor
'    VX4: Excite *Wire a 1K resistor between VX4 & SE26
'    SE26: Thermistor signal+, Red
'    Ground: Thermistor signal-, Green
'
' Eppley LWUP Precision Infrared Radiometer (2) *Note: Facing DOWN (LWUP)
' Solar sensor output
'    12H:  Solar sensor Signal+ Yellow
'    12L:  Solar sensor Signal- Blue
'    12L:  Jumper to Ground
'    Ground:  Jumper wire 12L -to- ground
'    Ground:  Cable shield Clear?
' Case temperatre thermistor
'    VX3: Excite *Wire a 1K resistor between VX3 & SE27
'    SE27: Thermistor signal+, White
'    Ground: Thermistor signal-, Black
' Dome temperature thermistor
'    VX4: Excite *Wire a 1K resistor between VX4 & SE28
'    SE28: Thermistor signal+, Red
'    Ground: Thermistor signal-, Green
'
'  All Weather Rain Gauge wired to a control port
'    Ground:  Cable Shield Clear?
'    P4:  Signal+ Red
'     G:  Signal- Black

' ==================================
' List of equipment and instruments.
' ==================================
' Battery bank, PV charging hardware
' Campbell Scientific CR1000X datalogger
' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 1)
' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 2)
' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 3)
' RM Young 27106T Vertical Wind Speed Sensor (Level 1)
' RM Young 27106T Vertical Wind Speed Sensor (Level 2)
' RM Young 27106T Vertical Wind Speed Sensor (Level 3)
' RM Young 41382VC Air Temp and RH (Level 0)
' RM Young 41382VC Air Temp and RH (Level 1)
' RM Young 41382VC Air Temp and RH (Level 2)
' RM Young 41382VC Air Temp and RH (Level 3)
' Rotronics MP101A Air Temp & RH Sensor (Level 0)
' All Weather Tipping Bucket Rain Gauge
' Eppley Precision Spectral Pyranometer *Note: Facing up (swdn)
' Eppley Precision Spectral Pyranometer *Note: Facing up (swup)
' Eppley Precision Infrared Radiometer *Note: Facing up (lwdn)
' Eppley Precision Infrared Radiometer *Note: Facing down (lwup)
' Net radiation (W/m2)
' Campbell Scientific 1-Hour Fuel Moisture
' Campbell Scientific Fuel Moisture and Temperature Station (CS506 & 107L)
' Campbell Scientific 10-Hour Fuel Moisture
' CS100 Barometric Pressure Sensor 


' ====================
' Definitions.
' ====================
' Data logger channel assignments and declared variables.

' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 1)
Const p_wind_horiz_lev1 = P1 'Horiz WindSpeed P1 Channel
Const se_wind_horiz_lev1 = 11 'Horiz WindDirection SE11 Channel
Const ex_wind_horiz_lev1 = VX2 'WindDirection Excite VX2 Terminal

' RM Young 27106T Vertical Wind Speed Sensor (Level 1)
Const se_wind_vert_lev1 = 7 ' Vert WindSpeed SE7 Channel

' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 2)
Const p_wind_horiz_lev2 = P1 'Horiz WindSpeed P1 Channel
Const se_wind_horiz_lev2 = 11 'Horiz WindDirection SE11 Channel
Const ex_wind_horiz_lev2 = VX2 'WindDirection Excite VX2 Terminal

' RM Young 27106T Vertical Wind Speed Sensor (Level 2)
Const se_wind_vert_lev2 = 7 ' Vert WindSpeed SE7 Channel

' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 3)
Const p_wind_horiz_lev3 = P1 'Horiz WindSpeed P1 Channel
Const se_wind_horiz_lev3 = 11 'Horiz WindDirection SE11 Channel
Const ex_wind_horiz_lev3 = VX2 'WindDirection Excite VX2 Terminal

' RM Young 27106T Vertical Wind Speed Sensor (Level 3)
Const se_wind_vert_lev3 = 7 ' Vert WindSpeed SE7 Channel

' MetOne 060A2 Air Temp Sensor (Level 0)
Const se_temp_metone_lev0 = 1
Const ex_temp_metone_lev0 = 1
Const p_fan_lev0 = 1

' Rotronics MP101A Air Temp & RH Sensor (Level 0)
se_rh_rotronics_lev0 = 15

' MetOne 060A2 Air Temp Sensor (Level 1)
Const se_temp_metone_lev1 = 1
Const ex_temp_metone_lev1 = 1
Const p_fan_lev1 = 1

' MetOne 060A2 Air Temp Sensor (Level 2)
Const se_temp_metone_lev2 = 1
Const ex_temp_metone_lev2 = 1
Const p_fan_lev2 = 1

' MetOne 060A2 Air Temp Sensor (Level 3)
Const se_temp_metone_lev3 = 1
Const ex_temp_metone_lev3 = 1
Const p_fan_lev3 = 1

' Eppley Precision Spectral Pyranometer *Note: Facing down (swdn)
Const d_swdn = 1
Const SWDNCal=9.58  ' Enter PSP1Cal(SWDN) = Eppley Sensitivity Cal Constant in microVolt/WM^2 (SWDN/PSP1)

' Eppley Precision Spectral Pyranometer *Note: Facing up (swup)
Const d_swup = 1
Const SWUPCal=8.56  ' Enter PSP2Cal(SWUP) = Eppley Sensitivity Cal Constant in microVolt/WM^2 (SWUP/PSP2)

' Eppley Precision Infrared Radiometer *Note: Facing UP (lwdn)
Const d_lwdn = 1
Const LWDNCal=2.00  ' Enter LWDNCal(LWDN) = Eppley Sensitivity Cal Constant in microVolt/WM^2 (LWDN/PIR-1)

' Eppley Precision Infrared Radiometer *Note: Facing UP (lwup)
Const d_lwup = 1
Const LWUPCal=3.87  ' Enter LWUPCal(LWUP) = Eppley Sensitivity Cal Constant in microVolt/WM^2 (LWUP/PIR-2)


' ====================
' Declare Variables.
' ====================
Const PScan=3  'enter program execution interval in seconds
' Variables used by multiple instruments.
Public hh, mm
Units hh = hours
Units mm = minutes

' Battery
Public BattV, PTemp_C
Public PVVolts
Units BattV=V
Units PTemp_C=deg C
Units PVVolts=V

' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 1)
Public spd1, dir1
Public mxgst1, dirgst1
Public HW1Max24HrTime(9) 
Public mx1gst, dir1gst
Public HWTime1_1min(9)
Public mxgsttoday
Public tgst1 As String * 4
Public t1gst As String * 4
Units spd1=m/s
Units mxgst1=m/s
Units mx1gst=m/s
Units dirgst1=deg
Units dir1gst=deg
Units dir1=deg
Units mxgsttoday = m/s
Units tgst1 = 24-hr-time
Units t1gst = 24-hr-time

' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 2)
Public spd2, dir2
Public mxgst2, dirgst2
Public HW2Max24HrTime(9) 
Public tgst2 As String * 4
Units spd2=m/s
Units mxgst2=m/s
Units dirgst2=deg
Units dir2=deg
Units tgst2 = 24-hr-time

' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 3)
Public spd3, dir3
Public mxgst3, dirgst3
Public HW3Max24HrTime(9) 
Public tgst3 As String * 4
Units spd3=m/s
Units mxgst3=m/s
Units dirgst3=deg
Units dir3=deg
Units tgst3 = 24-hr-time

' RM Young 27106T Vertical Wind Speed Sensor (Level 1)
Public w1
Units w1=m/s

' RM Young 27106T Vertical Wind Speed Sensor (Level 2)
Public w2
Units w2=m/s

' RM Young 27106T Vertical Wind Speed Sensor (Level 3)
Public w3
Units w3=m/s

' MetOne 060A2 Air Temp Sensor (Level 0)
Public temp0
Public mntemptoday = 99.0
Public mxtemptoday = -99.0
Public MinTime(9)
Public MaxTime(9)
Public tmntemp As String * 4
Public tmxtemp As String * 4
Public fan0
Units temp0=deg C
Units mntemptoday=deg C
Units mxtemptoday=deg C
Units tmntemp=24-hr-time
Units tmxtemp=24-hr-time
Units fan0=Hz

' MetOne 060A2 Air Temp Sensor (Level 1)
Public temp1
Public fan1 
Units temp1=deg C
Units fan1=Hz

' MetOne 060A2 Air Temp Sensor (Level 2)
Public temp2
Public fan2 
Units temp2=deg C
Units fan2=Hz

' MetOne 060A2 Air Temp Sensor (Level 3)
Public temp3
Public fan3 
Units temp3=deg C
Units fan3=Hz

' Rotronics MP101A Air Temp & RH Sensor (Level 0)
Public rh
Public avgrh,mxrh,mnrh
Units rh=%
Units avgrh=%
Units mxrh=%
Units mnrh=%
Public dewp
Public avgdewp,mxdewp,mndewp
Units dewp=deg C
Units avgdewp=deg C
Units mxdewp=deg C
Units mndewp=deg C

'All Weather Tipping Bucket Rain Gauge
Public precip
Units precip=in

' Eppley Precision Spectral Pyranometer *Note: Facing up (swdn)
Public swdn_measure, swdn, swdn_MJm2
Units swdn_measure=uV
Units swdn=W/m^2
Units swdn_MJm2=MJ/m^2

' Eppley Precision Spectral Pyranometer *Note: Facing up (swup)
Public swup_measure, swup, swup_MJm2
Units swup_measure=uV
Units swup=W/m^2
Units swup_MJm2=MJ/m^2

' Eppley Precision Infrared Radiometer *Note: Facing up (lwdn)
Public lwdn_measure, lwdn, lwdn_MJm2
Units lwdn_measure=uV
Units lwdn=W/m^2
Units lwdn_MJm2=MJ/m^2

' Eppley Precision Infrared Radiometer *Note: Facing down (lwup)
Public lwup_measure, lwup, lwup_MJm2
Units lwup_measure=uV
Units lwup=W/m^2
Units lwup_MJm2=MJ/m^2

' Net radiation (W/m2)
Public netrad
Units netrad=W/m^2

' Campbell Scientific 1-Hour Fuel Moisture
Public temp0f
Public EMC, fm1hr
Public i
Units fm1hr=%
Units temp0f=deg

' Campbell Scientific Fuel Moisture Station Package (CS506 & 107L)
' Campbell Scientific 10-Hour Fuel Moisture
Public FuelM10Hr_uS
Public fm10hr
Public tempFuel
Units FuelM10Hr_uS=microSec
Units fm10hr=%
Units tempFuel=deg C

' CS100 Barometric Pressure Sensor 
Public press
Public avgpress,mxpress,mnpress
Units press=mb
Units avgpress=mb
Units mxpress=mb
Units mnpress=mb

Const PSP1Cal=9.58  ' Enter PSP1Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2 for this tower

' ====================
' Data Tables.
' ====================

DataTable(Dat1min,True,48)  '*Note: data table size fixed to 48 records
  DataInterval(0,1,Min,10)
  ' This table is used to compute speed, direction and time of max sustained
  '    1min gust.

  ' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 1)
  WindVector (1,spd1,dir1,FP2,False,0,0,1)  
  FieldNames("spd1min,dir1min")
EndTable

DataTable(Dat15min,True,-1)
  DataInterval(0,15,Min,10)

  ' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 1)
  WindVector (1,spd1,dir1,FP2,False,0,0,1)  
  FieldNames("spd1,dir1")
  StdDev (1,spd1,FP2,False)
  FieldNames("sdspd1")
  StdDev (1,dir1,FP2,False)
  FieldNames("sddir1")
  Sample(1, mxgsttoday, FP2)

  ' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 2)
  WindVector (1,spd2,dir2,FP2,False,0,0,1)  
  FieldNames("spd2,dir2")
  StdDev (1,spd2,FP2,False)
  FieldNames("sdspd2")
  StdDev (1,dir2,FP2,False)
  FieldNames("sddir2")

  ' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 3)
  WindVector (1,spd3,dir3,FP2,False,0,0,1)  
  FieldNames("spd3,dir3")
  StdDev (1,spd3,FP2,False)
  FieldNames("sdspd3")
  StdDev (1,dir3,FP2,False)
  FieldNames("sddir3")

  ' RM Young 27106T Vertical Wind Speed Sensor (Level 1)
  Average(1,w1,FP2,False)  
  FieldNames("w1")
  StdDev(1,w1,FP2,False)  
  FieldNames("sdw1")

  ' RM Young 27106T Vertical Wind Speed Sensor (Level 2)
  Average(1,w2,FP2,False)  
  FieldNames("w2")
  StdDev(1,w2,FP2,False)  
  FieldNames("sdw2")

  ' RM Young 27106T Vertical Wind Speed Sensor (Level 3)
  Average(1,w3,FP2,False)  
  FieldNames("w3")
  StdDev(1,w3,FP2,False)  
  FieldNames("sdw3")

  '  MetOne 060A2 Air Temp Sensor(Level 0)
  Average(1,temp0,FP2,False)
  FieldNames("temp0")
  Sample(1, mntemptoday, FP2)
  Sample(1, mxtemptoday, FP2)

  '  MetOne 060A2 Air Temp Sensor(Level 1)
  Average(1,temp1,FP2,False)
  FieldNames("temp1")

  '  MetOne 060A2 Air Temp Sensor(Level 2)
  Average(1,temp2,FP2,False)
  FieldNames("temp2")

  '  MetOne 060A2 Air Temp Sensor(Level 3)
  Average(1,temp3,FP2,False)
  FieldNames("temp3")

  ' Rotronics MP101A Air Temp & RH Sensor (Level 0)
  Average(1,rh,FP2,False)
  FieldNames("rh")

  'All Weather Tipping Bucket Rain Gauge
  Totalize(1,precip,FP2,False)  

  ' Eppley Precision Spectral Pyranometer *Note: Facing down (swdn)
  Average(1,swdn,IEEE4,False)  'Average solar irradiance

  ' Eppley Precision Spectral Pyranometer *Note: Facing up (swup)
  Average(1,swup,IEEE4,False)  'Average solar irradiance

  ' Eppley Precision Infrared Radiometer *Note: Facing up (lwdn)
  Average(1,lwdn,IEEE4,False)  'Average downward longwave irradiance

  ' Eppley Precision Infrared Radiometer *Note: Facing down (lwup)
  Average(1,lwup,IEEE4,False)  'Average downward longwave irradiance

  ' Net radiation (W/m2)
  Average(1,netrad,IEEE4,False)  'Average net radiation

  ' Campbell Scientific 1-Hour Fuel Moisture
  Average (1,fm1hr,FP2,False)

  ' Campbell Scientific Fuel Moisture Station Package (CS506 & 107L)
  ' Campbell Scientific 10-Hour Fuel Moisture
  Average (1,fm10hr,FP2,False)
  FieldNames("fm10hr")
  Average (1,tempFuel,FP2,False)
  FieldNames("tempFuel")

  ' CS100 Barometric Pressure Sensor 
  Average(1,press,FP2,False)
  FieldNames("press")
EndTable

DataTable(Dat24hr,True,-1)
  DataInterval(0,24,Hr,10)

  ' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 1)
  Average(1,spd1,FP2,False)  
  Fieldnames("avgspd1")
  Sample (1,mxgst1,FP2)  
  Sample (1,dirgst1,FP2)  
  Sample(1,tgst1,String)
  Sample (1,mx1gst,FP2)  
  Sample (1,dir1gst,FP2)  
  Sample(1,t1gst,String)

  ' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 2)
  Average(1,spd2,FP2,False)  
  Fieldnames("avgspd2")
  Sample (1,mxgst2,FP2)  
  Sample (1,dirgst2,FP2)  
  Sample(1,tgst2,String)

  ' RM Young 05305-AQ Horizontal Wind Speed & Direction Sensor (Level 3)
  Average(1,spd3,FP2,False)  
  Fieldnames("avgspd3")
  Sample (1,mxgst3,FP2)  
  Sample (1,dirgst3,FP2)  
  Sample(1,tgst3,String)

  '  MetOne 060A2 Air Temp Sensor(1)
  Average(1,temp0,FP2,False)  
  Fieldnames("avgtemp0")
  Maximum(1,temp0,FP2,False,False) 
  FieldNames("mxtemp0")
  Sample(1, tmxtemp, String)
  Minimum(1,temp0,FP2,False,False) 
  FieldNames("mntemp0")
  Sample(1, tmntemp, String)

  ' Rotronics MP101A Air Temp & RH Sensor (Level 0)
  Average(1,rh,FP2,False)  
  Fieldnames("avgrh")
  Maximum(1,rh,FP2,False,False) 
  FieldNames("mxrh")
  Minimum(1,rh,FP2,False,False) 
  FieldNames("mnrh")

  'All Weather Tipping Bucket Rain Gauge
  Totalize(1,precip,FP2,False)  
  Fieldnames("tprecip")

  ' Eppley Precision Spectral Pyranometer *Note: Facing down (swdn)
  Totalize(1,swdn_MJm2,IEEE4,False)  'Total flux density
  FieldNames("swedn")

  ' Eppley Precision Spectral Pyranometer *Note: Facing up (swup)
  Totalize(1,swup_MJm2,IEEE4,False)  'Total flux density
  FieldNames("sweup")

  ' Eppley Precision Infrared Radiometer *Note: Facing up (lwdn)
  Totalize(1,lwdn_MJm2,IEEE4,False)  'Total flux density
  FieldNames("lwedn")

  ' Eppley Precision Infrared Radiometer *Note: Facing down (lwup)
  Totalize(1,lwup_MJm2,IEEE4,False)  'Total flux density
  FieldNames("lwedn")

  ' Net radiation (W/m2)
  Average(1,netrad,IEEE4,False)  'Average net radiation
  Fieldnames("nete")

  ' CS100 Barometric Pressure Sensor 
  Average(1,press,FP2,False)  
  Fieldnames("avgpress")
  Maximum(1,press,FP2,False,False) 
  FieldNames("mxpress")
  Minimum(1,press,FP2,False,False) 
  FieldNames("mnpress")
EndTable

DataTable(OpsMonitor,True,-1)
  DataInterval(0,15,Min,0)

  ' Battery
  Average(1,BattV,FP2,False)
  Average(1,PTemp_C,FP2,False)
  FieldNames("PTemp_AVGDegC")
  Average(1,PVVolts,FP2,False)

  ' MetOne 060A2 Air Temp Sensor(Level 0)
  Average (1,fan0,FP2,False) 
EndTable

' ====================
' Subroutines.
' ====================

' ====================
' Main Program.        
' ====================
BeginProg

' ====================
' Main Loop.        
' ====================
  Scan(3,Sec,1,0)

    ' Battery
    ' Datalogger Battery Voltage measurement 'BattV'
    Battery(BattV)
    ' Datalogger Wiring Panel Temperature measurement 'PTemp_C'
    PanelTemp(PTemp_C,_60Hz)
    ' Monitor exactly how high the sun voltage is being provided by the Solar Panels throughout the day.
    VoltDiff(PVVolts,1,mV5000,d_pvvolts,True,500,60,0.01,0)

    ' RM Young 05305-AQ Wind Speed & Direction Sensor (Level 1)
    ' Measure instantaneous wind speed and direction.
    PulseCount(spd1,1,p_wind_horiz_lev1,5,1,0.1024,0)
    BrHalf(dir1,1,mV1000,se_wind_horiz_lev1,ex_wind_horiz_lev1,1,1000,True,0,_60Hz,355,0)
    If dir1>=360 OR dir1<0 Then dir1=0

    ' Keep track of the speed, direction and time of the maximium 3 sec gust.
    If spd1 > mxgst1 Then
      mxgst1 = spd1
      dirgst1 = dir1
      mxgsttoday = mxgst1
      RealTime (HW1Max24HrTime())
      hh = HW1Max24HrTime(4)
      mm = HW1Max24HrTime(5)
      'Sprintf(tgst1, "%02d%02d",INT(hh),INT(mm))
      If hh >= 10 AND mm >= 10 Then
        tgst1 = "" + hh + mm
      ElseIf hh >= 10 AND mm < 10 Then
        tgst1 = "" + hh + "0" + mm
      ElseIf hh < 10 AND mm >= 10 Then
        tgst1 = "0" + hh + mm
      ElseIf hh < 10 AND mm < 10 Then
        tgst1 = "0" + hh + "0" + mm
      EndIf
    EndIf

    ' Keep track of the speed, direction and time of the maximium 1 min gust.
    If Dat1min.spd1min > mx1gst Then
      mx1gst = Dat1min.spd1min
      dir1gst = Dat1min.dir1min
      RealTime (HWTime1_1min())
      hh = HWTime1_1min(4)
      mm = HWTime1_1min(5)
      'Sprintf(t1gst, "%02d%02d",INT(hh),INT(mm))
      If hh >= 10 AND mm >= 10 Then
        t1gst = "" + hh + mm
      ElseIf hh >= 10 AND mm < 10 Then
        t1gst = "" + hh + "0" + mm
      ElseIf hh < 10 AND mm >= 10 Then
        t1gst = "0" + hh + mm
      ElseIf hh < 10 AND mm < 10 Then
        t1gst = "0" + hh + "0" + mm
      EndIf
    EndIf

    ' RM Young 05305-AQ Wind Speed & Direction Sensor (Level 2)
    ' Measure instantaneous wind speed and direction.
    PulseCount(spd2,1,p_wind_horiz_lev2,5,1,0.1024,0)
    ' ktw: Check on RevEx and Settling time arguments.
    BrHalf(dir2,1,mV1000,se_wind_horiz_lev2,ex_wind_horiz_lev2,1,1000,False,20000,_60Hz,355,0)
    If dir2>=360 OR dir2<0 Then dir2=0

    ' Keep track of the speed, direction and time of the maximium 3 sec gust.
    If spd2 > mxgst2 Then
      mxgst2 = spd2
      dirgst2 = dir2
      RealTime (HW2Max24HrTime())
      hh = HW2Max24HrTime(4)
      mm = HW2Max24HrTime(5)
      'Sprintf(tgst2, "%02d%02d",INT(hh),INT(mm))
      If hh >= 10 AND mm >= 10 Then
        tgst2 = "" + hh + mm
      ElseIf hh >= 10 AND mm < 10 Then
        tgst2 = "" + hh + "0" + mm
      ElseIf hh < 10 AND mm >= 10 Then
        tgst2 = "0" + hh + mm
      ElseIf hh < 10 AND mm < 10 Then
        tgst2 = "0" + hh + "0" + mm
      EndIf
    EndIf


    ' RM Young 05305-AQ Wind Speed & Direction Sensor (Level 3)
    ' Measure instantaneous wind speed and direction.
    PulseCount(spd3,1,p_wind_horiz_lev3,5,1,0.1024,0)
    ' ktw: Check on RevEx and Settling time arguments.
    BrHalf(dir3,1,mV1000,se_wind_horiz_lev3,ex_wind_horiz_lev3,1,1000,False,20000,_60Hz,355,0)
    If dir3>=360 OR dir3<0 Then dir3=0

    ' Keep track of the speed, direction and time of the maximium 3 sec gust.
    If spd3 > mxgst3 Then
      mxgst3 = spd3
      dirgst3 = dir3
      RealTime (HW3Max24HrTime())
      hh = HW3Max24HrTime(4)
      mm = HW3Max24HrTime(5)
      'Sprintf(tgst3, "%02d%02d",INT(hh),INT(mm))
      If hh >= 10 AND mm >= 10 Then
        tgst3 = "" + hh + mm
      ElseIf hh >= 10 AND mm < 10 Then
        tgst3 = "" + hh + "0" + mm
      ElseIf hh < 10 AND mm >= 10 Then
        tgst3 = "0" + hh + mm
      ElseIf hh < 10 AND mm < 10 Then
        tgst3 = "0" + hh + "0" + mm
      EndIf
    EndIf


    '  RM Young 27106T Wind Speed Sensor (Level 1)
    '  Wind Speed Sensor measurements 'w1'
    VoltSe(w1,1,mV5000,se_wind_vert_lev1,True,0,_60Hz,0.0225,0)

    '  RM Young 27106T Wind Speed Sensor (Level 2)
    '  Wind Speed Sensor measurements 'w2'
    VoltSe(w2,1,mV5000,se_wind_vert_lev2,True,0,_60Hz,0.0225,0)

    '  RM Young 27106T Wind Speed Sensor (Level 3)
    '  Wind Speed Sensor measurements 'w3'
    VoltSe(w3,1,mV5000,se_wind_vert_lev3,True,0,_60Hz,0.0225,0)

    ' MetOne 060A2 Air Temp Sensor (Level 0)
    BrHalf(temp0,1,mV1000,se_temp_metone_lev0,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    ' Measure the fan speed in Hz
    PulseCount (fan0,1,p_fan_lev0,3,1,1.0,0)
    
    ' Keep track of daily min/max.
    If temp0 < mntemptoday Then
      mntemptoday = temp0
      RealTime (MinTime())
      hh = MinTime(4)
      mm = MinTime(5)
      'Sprintf(tmntemp, "%02d%02d",hh,mm)
      If hh >= 10 AND mm >= 10 Then
        tmntemp = "" + hh + mm
      ElseIf hh >= 10 AND mm < 10 Then
        tmntemp = "" + hh + "0" + mm
      ElseIf hh < 10 AND mm >= 10 Then
        tmntemp = "0" + hh + mm
      ElseIf hh < 10 AND mm < 10 Then
        tmntemp = "0" + hh + "0" + mm
      EndIf
    EndIf
    If temp0 > mxtemptoday Then
      mxtemptoday = temp0
      RealTime (MaxTime())
      hh = MaxTime(4)
      mm = MaxTime(5)
      'Sprintf(tmxtemp, "%02d%02d",INT(hh),INT(mm))
      If hh >= 10 AND mm >= 10 Then
        tmxtemp = "" + hh + mm
      ElseIf hh >= 10 AND mm < 10 Then
        tmxtemp = "" + hh + "0" + mm
      ElseIf hh < 10 AND mm >= 10 Then
        tmxtemp = "0" + hh + mm
      ElseIf hh < 10 AND mm < 10 Then
        tmxtemp = "0" + hh + "0" + mm
      EndIf
    EndIf

    ' MetOne 060A2 Air Temp Sensor (Level 1)
    BrHalf(temp1,1,mV1000,se_temp_metone_lev1,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    ' Measure the fan speed in Hz
    PulseCount (fan1,1,p_fan_lev1,3,1,1.0,0)

    ' MetOne 060A2 Air Temp Sensor (Level 2)
    BrHalf(temp2,1,mV1000,se_temp_metone_lev2,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    ' Measure the fan speed in Hz
    PulseCount (fan2,1,p_fan_lev2,3,1,1.0,0)

    ' MetOne 060A2 Air Temp Sensor (Level 3)
    BrHalf(temp3,1,mV1000,se_temp_metone_lev3,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    ' Measure the fan speed in Hz
    PulseCount (fan3,1,p_fan_lev3,3,1,1.0,0)

    ' Rotronics MP101A Air Temp & RH Sensor (Level 0)
    VoltSe(rh,1,mV1000,se_rh_rotronics_lev0,0,0,_60Hz,0.1,0)
    if rh < 0.0 then rh = 0.0
    if rh > 100.0 then rh = 100.0
    ' Convert relative humidity to dew point.
    DewPoint(dewp,temp0,rh)
    If dewp>temp0 OR dewp=NAN Then dewp=temp0

    'All Weather Tipping Bucket Rain Gauge
    PulseCount(precip,1,p_precip,1,0,0.01,0)	
    'Change suggested by Alex, original Pconfig for "control ports only", 
    '   suggested use of pull up on pulse channels. From CRBasic help manual:
    'PulseCount ( Dest, Reps, PChan, PConfig, POption, Mult, Offset )
	'PConfig options:
	'Code 	Description
	'0 	Disabled
	'1 	Switch Closure with pull up
	'2 	Switch Closure with pull down (Control ports only)
	'3 	High frequency with pull up
	'4 	High frequency with pull down (Control ports only)
	'5 	Low Level AC (Pulse channels only)

    ' Eppley Precision Spectral Pyranometer *Note: Facing down (swdn)
    VoltDiff(swdn_measure,1,mV20,d_swdn,True,0,_60Hz,1000,0)
    swdn=swdn_measure/SWDNCal  'in W/m2
    swdn_MJm2=(swdn/1000000)*PScan  'in MJ/m2

    ' Eppley Precision Spectral Pyranometer *Note: Facing up (swup)
    VoltDiff(swup_measure,1,mV20,d_swup,True,0,_60Hz,1000,0)
    swup=swup_measure/SWUPCal  'in W/m2
    swup_MJm2=(swup/1000000)*PScan  'in MJ/m2

    ' Eppley Precision Infrared Radiometer *Note: Facing up (lwdn)
    VoltDiff(lwdn_measure,1,mV20C,d_lwdn,True,0,_60Hz,1000,0) 'Eppley PIR
    lwdn=lwdn_measure/LWDNCal  'in W/m2
    lwdn_MJm2=(lwdn/1000000)*PScan  'in MJ/m2

    ' Eppley Precision Infrared Radiometer *Note: Facing down (lwup)
    VoltDiff(lwup_measure,1,mV20C,d_lwup,True,0,_60Hz,1000,0) 'Eppley PIR
    lwup=lwup_measure/LWUPCal  'in W/m2
    lwup_MJm2=(lwup/1000000)*PScan  'in MJ/m2

    ' Net radiation (W/m2)
    netrad = (swdn + lwdn) - (swup +lwup)

' Campbell Scientific 1-Hour Fuel Moisture
    ' Source of previous calculation of EMC and 1 hr fuel moisture is unknown, so
    '   switched to calculations from Cohen and Deeming reference instead. 
    '   The differences in 1 hr fuel moisture were found to be small.
    ' December 2021 - Ken Waight

    ' New calculation of EMC and 1 hr fuel moisture.
    ' Cohen, J.D. and J.E. Deeming, 1982?: The National Fire Danger Rating System: basic equations. 
    '   General Technical Report PSW-82, U.S. Forest Service, Pacific Southwest Forest and Range
    '   Experimental Station.
    ' December 2021 - Ken Waight
    temp0f = (1.8*temp0)+32
    If rh0 < 10 Then
      EMC = 0.03229 + 0.281073*rh0 - 0.000578*temp0f*rh0
    ElseIf rh0>=10 AND rh0 < 50 Then
      EMC = 2.22749 + 0.160107*rh0 - 0.014784*temp0f
    ElseIf rh0>= 50 Then
      EMC = 21.0606 + 0.005565*rh0*rh0 - 0.00035*rh0*temp0f - 0.483199*rh0
    EndIf
    fm1hr = (4.12*EMC+fm10hr)/5.0


    ' Campbell Scientific Fuel Moisture Station Package (CS506 & 107L)
    ' Campbell Scientific 10-Hour Fuel Moisture
    ' CS506 Fuel Moisture Sensor (constant power) measurements
    PortSet(c_fm10hr_portset,1) ' Power on the fuel moisture sensor
    PeriodAvg(FuelM10Hr_uS,1,0,se_fm10hr_moisture,0,0,100,10,1,0)
    PortSet(c_fm10hr_portset,0) ' Power off the fuel moisture sensor
    If FuelM10Hr_uS <= 17.7 Then
      fm10hr=7.6298*FuelM10Hr_uS-130.0904
    Else
      fm10hr=0.0406*FuelM10Hr_uS^2+3.7685*FuelM10Hr_uS-73.7974
    EndIf
    ' CS506 Fuel Temperature Sensor measurement
    Therm107 (tempFuel,1,se_fm10hr_temp,Vx1,0,_60Hz,1,0)

    ' CS100 Barometric Pressure Sensor 
    VoltSe(press,1,mV1000,se_press,0,0,_60Hz,0.2,600)
    ' What was the reason for this line in the old code?
    ' BaroPres_mbar=BaroPres_mbar*1

' =================
' Table calls
' =================

    CallTable dat1min
    CallTable dat15min
    CallTable dat24hr
    CallTable opsMonitor

    If TimeIntoInterval (0,1,Day) Then
      ' Max 3 sec gusts.
      mxgst1 = 0
      dirgst1 = 0
      mxgsttoday = 0

      ' Max 1 min gusts.
      mx1gst = 0
      dir1gst = 0
    EndIf
    If TimeIntoInterval (0,1,Day) Then
      ' Max 3 sec gusts.
      mxgst2 = 0
      dirgst2 = 0
    EndIf
    If TimeIntoInterval (0,1,Day) Then
      ' Max 3 sec gusts.
      mxgst3 = 0
      dirgst3 = 0
    EndIf
    If TimeIntoInterval (0,1,Day) Then
      ' Reset variables at the beginning of a new day. 
      mntemptoday = 99
      mxtemptoday = -99
    EndIf
  NextScan

EndProg
