'CR3000;  TA49
'
' Title:  TA49-V9.CR3
'
'
'
'
'#####################################################################
'########## Program Comments #########################################
'#####################################################################
' 
'
'
'Date: 03-01-2023 Updated Program
'Title:  TA49-V9.CR3
'Updated Progr. for Eppley 8-48 Change-out.
'Updated for 8-48 Multiplier, new Multiplier 8.62
'Previous Multiplier 10.82
'
'
'Date: 26 May 2022, Program Update
'Updated AirTemp Sensor Models form 060A2 to 061 and had to adjust 
'multiplier & offsett along with 'scaling resistor callout.
'
'
'Date:  17 March, 2021; Program Update
'Program New Version: TA49_V7.CR3
'Changed-Out Eppley Sensor SN-16819 with SN-29209.
'SN-16819 multiplier was 11.10; SN-29209 multiplier is 10.82.
'
'
'
' Date:  July 7, 2020
' New Program:  TA49_V6-2.CR3
' Replaced Eppley 8-48 Sensor, updated constant/multiplier to 11.10.
' Changed-Out Datalogger for periodic calibration.
' Previous 8-48 constant/multiplier was 9.73.
' Old Program:  TA49_V6-1.CR3
'
'
'
'Date: Jan 26, 2018
' New Program: TA49_V5.CR3
' Old Program: TA49_V4.CR3
'
'
'
'Updated to TA49_V6-1.CRS on 01152020 for Sensor Change-Out.
' Version TA49_V6-1.CR3 GTStanton updated Eppley Sensor Constant from 
'9.27 to 9.73 for the newly installed sensor on 01152020 @ 1012hrs MST.
'
'
'=====================================================================
'Version:5   26 January 2018 Jason Ritter (JCR), Campbell Scientific
'Updated program to version 6, adding the following Public variables
'PrecipToday - Precipitation since midnight, updated every 15 minutes
'MaxGustToday - Maximum wind gust since midnight (speed at level 1 only), updated every 15 minutes
'WindChill_C - Wind chill at level 1 only, deg C, updated every 15 minutes, calculated with:
'              WindChill = 35.74 + (0.6215*temp0) - (35.75*speed1^0.16) + (0.4275*temp0*speed1^0.16)
'              with speed1 in mph and temp0 in deg F
'              Then WindChill_C = (WindChill -32)/1.8
'SigmaPhi &
'SigmaTheta-stability at level 1 only, nighttime shortwave down measurement <6 W/m2
'
'=====================================================================
'
'
'
'Updted Program to TA49_V4.CRS on 02062017 by GTStanton
'Reversed BRHalf Measurements to True and added settling time
'from 0 to 20000uSeconds.  Note test changes of BRHalf to False Excitation
' did NOT make a difference int he L1 & L2 Air Temp Measurement issues.
'
'
'Test Program Update to TA49_V3_1.CR2 on 12012016. By GTStanton
'Changed BRHalf Air Temp Measurements to False from True to see if change effects
'the L1 Air Temp measurement intermittency to jump high.
'
'Updated to V3 on11092016 by GTStanton
'Changed-Out Eppley Sensor, old Multiplier: 12.06
'New Eppley Sensor Multiplier:  9.27
'
'
'Date: July 30, 2014'
' New Program: TA49_V1.CR3
' Old Program: TA6_Combined-SCW.CR3
' Comments:
' Updates created on 08-17-2015 noted below.
' Updated PSP Sensor Multiplier to current value 12.06 from 10.78, on 08172015.
'Correct Solar Sensor Conversion Multiplier to 1E6 from 1E5.
' Updated Cosine Effect into conversion multipler for Vertical Wind Speed to 0.0225.
'
'
'
' To Do: !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
' Go To "Declare Variable" Section and enter values for;
'  Const PScan=?  '* Enter value for program execution interval in seconds
'  Const PSP1Cal=?.??  '* Enter PSP1Cal = Eppley SensitivityCal Constant in microVolt/WM^2

'!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!

'^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^
'*Install Note: Setup & test communication and sensor measurements in
' lab/office prior to field deployment!
'^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^
'---------------------------------
' Date: July 11, 2014
' Program: TA6_Combined-SCW.CR3
' Comments: Started-Created by Short Cut (3.0)
'---------------------------------------------
'*********************************************************************
'
'####################################################################
'##### -Wiring for CR3000- ##########################################
'####################################################################
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (1)
'    1H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P1:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (2)
'    1L:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P2:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (3)
'    2H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P3:  HWspd Signal Red
'
'  RMYoung 27106T Wind Speed Sensor (1)
'    3H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (2)
'    3L:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (3)
'    4H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  MetOne 061 Air Temp Sensor(1) L0
'    5H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 5H
'
'  MetOne 061 Air Temp Sensor (2) L1
'    5L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 5L
'
'  MetOne 061 Air Temp Sensor (3) L2
'    6H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 6H
'
'  MetOne 061 Air Temp Sensor (4) L3
'    6L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 6L
'
'  Rotronics MP101A Air Temp & RH Sensor (constant power)
'   Co-Located in L0 Station
'    7L:  Air Temperature Siganl Red(Brown)
'    8H:  RH Signal White
'    Ground:  Signal Ground Yellow
'    Ground:  Power Ground Green
'    Ground:  Cable Shield Clear?
'    12V:  Power Blue
'
' Eppley PSP1 Precision Spectral Pyranometer (SWDN)(1)
'    9H:  Signal+ Green
'    9L:  Signal- Blue
' *Note: Jumper wire 9L -to- ground
'    Ground:  Cable shield Clear?
'
'  AllWeatherInc Tipping Bucket Rain Gauge wired to a control port
'    Ground:  Cable Shield Clear?
'    P4:  Signal+ Red
'     G:  Signal- Black
'*********************************************************************
'
'#####################################################################
'##### Declare Variables #############################################
'#####################################################################

Const PScan=3  'enter program execution interval in seconds
Const PSP1Cal=8.62  ' Enter PSP1Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
SequentialMode
Dim AirTC
Public BattV, PTemp_C
Public HWSpd1_ms, HWDir1_deg, HWSpd2_ms, HWDir2_deg, HWSpd3_ms, HWDir3_deg,
Public VWSpd1_ms, VWSpd2_ms, VWSpd3_ms
Public AirTemp1_DegC, AirTemp2_DegC, AirTemp3_DegC, AirTemp4_DegC
Public RotronAirT_DegC, RotronRH_percent
Public Rain_inch
Public EppPSP1_measure, EppPSP1_Wm2, EppPSP1_MJm2
Public DewPt_DegC
'
Public HWSpd1Max24Hr, HWDir1Max24Hr,HW1Max24HrTime(9)
Public HWSpd2Max24Hr, HWDir2Max24Hr,HW2Max24HrTime(9)
Public HWSpd3Max24Hr, HWDir3Max24Hr,HW3Max24HrTime(9)
Public HWSpd4Max24Hr, HWDir4Max24Hr,HW4Max24HrTime(9)
'
Public HWSpd1_1min, HWDir1_1min, HWTime1_1min(9)
Public HWSpd1_max1min, HWDir1_max1min, HWTime1_max1min(9)
'=====================================================================
'Variables added 1/26/17 by Jason Ritter for 15 minute update to Public table
Public PrecipToday, MaxGustToday,WindChill_15min
Dim WindChill_C,WindChill_F, temp0_F, speed1_mph 'Variables for wind chill calculation
Dim u
Public SigmaPhi, SigmaTheta
Public V_PGCat As String
Public H_PGCat As String
Public Sun As Boolean
'=================================================================
'
'*******************************************************************
'
'#####################################################################
'##### Declare Units #################################################
'#####################################################################
Units BattV=Volts
Units PTemp_C=Deg C
Units HWSpd1_ms=meters/second
Units HWDir1_deg=degrees
Units HWSpd2_ms=meters/second
Units HWDir2_deg=degrees
Units HWSpd3_ms=meters/second
Units HWDir3_deg=degrees
Units VWSpd1_ms=meters/second
Units VWSpd2_ms=meters/second
Units VWSpd3_ms=meters/second
Units AirTemp1_DegC=Deg C
Units AirTemp2_DegC=Deg C
Units AirTemp3_DegC=Deg C
Units AirTemp4_DegC=Deg C
Units RotronAirT_DegC=Deg C
Units RotronRH_percent=%
Units EppPSP1_measure=uV
Units EppPSP1_Wm2=W/m^2
Units EppPSP1_MJm2=MJ/m^2
Units DewPt_DegC=Deg C
Units Rain_inch=inch
'******************************************************************
'===================================================================
'Units for variables added by JCR, 1/26/18
Units PrecipToday = inch
Units MaxGustToday = meters/second
Units WindChill_15min = Deg C

'===================================================================
'CS506 Fuel Moisture Probe
'    Ground:  Clear
'    13H(SE 25):  Signal- Green
'    G:  Power Ground - Black
'    C5:  Control - Orange
'    12V:  Power (+) - Red
'
'Fuel Temp (107 Sensor)
'     13L(SE26):  Signal - Red
'    Ground:  Purple
'    Ground:  Clear
'    VX1:  Excitation -Black
Public FuelM10Hr_uS
Public FuelM10Hr_prct
Public FuelTempC
Units FuelM10Hr_uS=microSec
Units FuelM10Hr_prct=%
Units FuelTempC=DegC

Public AirTemp1_DegF
Public EMC, FuelM1Hr_prct
Units FuelM1Hr_prct=%

Public Daily_Precip_Time ' num of seconds there was precip
Public FuelM100Hr_Yest 'yesterdays 100Hr Fuel M
Public BNDRYH
Public PPTDUR' number of hours of precip in previous 24 Hours
Public Daylit ' number of daylight hours
Public EMCBar
Public FuelM100Hr_prct
Public FuelM1000Hr_prct
Public BNDRYT(7) = {20, 20, 20, 20, 20, 20, 20} '(10+5*Climat)
Public MC1000(7) = {20, 20, 20, 20, 20, 20, 20} '(10+5*Climat)
Public PM1000, BDYBAR
'Public AirTemp1_DegF
Public SunHourDuration
Units FuelM100Hr_prct=%
Units FuelM1000Hr_prct=%
Dim i
'
'
'####################################################################
'##### Define Data Tables ############################################
'#####################################################################
'----------------------------------------------------------------
'----- Data Table: "Dat1min" , Interval: 1minute ---------------------
'---------------------------------------------------------------------
' *Note: This table-readings used to compute speed,direction&time of max sustained
'        1min gust using the WindVector instruction on RMY05305 (1) Wind Sensor.
DataTable(Dat1min,True,48)  '*Note: data table size fixed to 48 records
  DataInterval(0,1,Min,10)
  WindVector (1,HWSpd1_ms,HWDir1_deg,FP2,False,0,0,0)  'Wind Vector RMY05305 (1) Sensor
  '  FieldNames("HWSpd1_AVGms,HWDir1_AVGdeg,HWDir1_StdDev")
  Sample (2,HWTime1_1min(4),FP2)  'RMY05305 (1) time HH,MM
EndTable

DataTable(EMC_Vals,True,30)  '*Note: data table size fixed to 48 records
  DataInterval(1438,1440,min,10)'MH 10/18 changed timeinto interval to 1438 so values are available for calculations at 1439)
  Maximum (1,AirTemp1_DegC,FP2,False,False)
  SampleMaxMin (1,EMC,FP2,False)
  FieldNames ("EMCMin")
  Minimum (1,AirTemp1_DegC,FP2,False,False)
  SampleMaxMin (1,EMC,FP2,False)
  FieldNames ("EMCMax")
  'ktw: This is not necessary after changes? Sample (1,BNDRYT,FP2)
EndTable

'-----------------------------------------------------------------------------------
'----- Data Table: "Dat15min" , Interval: 15minutes --------------------------------
'-----------------------------------------------------------------------------------
DataTable(Dat15min,True,-1)
  DataInterval(0,15,Min,10)
  '-----  EPA Wind Vector: Instruction "WindVector" -----------
  'mean horizontal speed, Field Name: "HWSpd1_AVGms",
  'unit vector mean direction, Field Name: "HWDir1_AVGdeg",
  '& standard deviation of direction, Field Name: "HWDir1_StdDev".
  '-------------------------------------------------------------
  WindVector (1,HWSpd1_ms,HWDir1_deg,FP2,False,0,0,0)  'RMY05305 (1) Sensor
  FieldNames("HWSpd1_AVGms,HWDir1_AVGdeg,HWDir1_StdDev")
  StdDev(1,HWSpd1_ms,FP2,False)  'StdDev RMY05305 (1) Wind Speed
  FieldNames("HWSpd1_StdDev")
  '-----  EPA Wind Vector: Instruction "WindVector" -----
  WindVector (1,HWSpd2_ms,HWDir2_deg,FP2,False,0,0,0)  'RMY05305 (2) Sensor
  FieldNames("HWSpd2_AVGms,HWDir2_AVGdeg,HWDir2_StdDev")
  StdDev(1,HWSpd2_ms,FP2,False)  'StdDev RMY05305 (2) Wind Speed
  FieldNames("HWSpd2_StdDev")
  '-----  EPA Wind Vector: Instruction "WindVector" -----
  WindVector (1,HWSpd3_ms,HWDir3_deg,FP2,False,0,0,0)  'RMY05305 (3) Sensor
  FieldNames("HWSpd3_AVGms,HWDir3_AVGdeg,HWDir3_StdDev")
  StdDev(1,HWSpd3_ms,FP2,False)  'StdDev RMY05305 (3) Wind Speed
  FieldNames("HWSpd3_StdDev")
  '-------------------------------------------------------------
  Average(1,VWSpd1_ms,FP2,False)  'Avg RMY27106T (1) Wind Speed
  FieldNames("VWSpd1_AVGms")
  StdDev(1,VWSpd1_ms,FP2,False)  'StdDev RMY27106T (1) Wind Speed
  FieldNames("VWSpd1_StdDev")
  Average(1,VWSpd2_ms,FP2,False)  'Avg RMY27106T (2) Wind Speed
  FieldNames("VWSpd2_AVGms")
  StdDev(1,VWSpd2_ms,FP2,False)  'StdDev RMY27106T (2) Wind Speed
  FieldNames("VWSpd2_StdDev")
  Average(1,VWSpd3_ms,FP2,False)  'Avg RMY27106T (3) Wind Speed
  FieldNames("VWSpd3_AVGms")
  StdDev(1,VWSpd3_ms,FP2,False)  'StdDev RMY27106T (3) Wind Speed
  FieldNames("VWSpd3_StdDev")
  '-------------------------------------------------------------
  Average(1,AirTemp1_DegC,FP2,False)  'Avg MetOne061 (1) Air Temp
  FieldNames("AirTemp1_AVGDegC")
  Average(1,AirTemp2_DegC,FP2,False)  'Avg MetOne061 (2) Air Temp
  FieldNames("AirTemp2_AVGDegC")
  Average(1,AirTemp3_DegC,FP2,False)  'Avg MetOne061 (3) Air Temp
  FieldNames("AirTemp3_AVGDegC")
  Average(1,AirTemp4_DegC,FP2,False)  'Avg MetOne061 (4) Air Temp
  FieldNames("AirTemp4_AVGDegC")
  '-------------------------------------------------------------
  Average(1,RotronAirT_DegC,FP2,False)  'Avg Rotron MP101A Air Temp
  FieldNames("RotronAirT_DegC")
  Average(1,RotronRH_percent,FP2,False)  'Avg Rotron MP101A Relative Humidity
  FieldNames("RotronRH_AVGpercent")
  '-------------------------------------------------------------
  Average(1,DewPt_DegC,FP2,False)  'Avg Dew Point
  FieldNames("DewPt_AVGDegC")
  '-------------------------------------------------------------
  Totalize(1,Rain_inch,FP2,False)  'Total AW60103 rain
  FieldNames("Rain_TOTinch")
  '-------------------------------------------------------------
  Average(1,EppPSP1_Wm2,IEEE4,False)  'Avg PSP1 solar radiation
  FieldNames("EppPSP1_AVGWm2")
  '  Totalize(1,EppPSP1_MJm2,IEEE4,False)  'Total PSP1 flux density
  '  FieldNames("EppPSP1_TOTMJm2")
  '-------------------------------------------------------------
  Minimum(1,BattV,FP2,False,False)  'Min Battery Voltage
  FieldNames("BattV_MINVolt")
  Average(1,PTemp_C,FP2,False)  'Avg datalogger panel temperature
  FieldNames("PTemp_AVGDegC")
  '-------------------------------------------------------------
  Average (1,FuelM10Hr_prct,FP2,False)
  Average (1,FuelTempC,FP2,False)

  Average (1,FuelM1Hr_prct,FP2,False)
  
  Average (1,FuelM100Hr_prct,FP2,False)
  Average (1,FuelM1000Hr_prct,FP2,False)
EndTable
'***********************************************************************************
'
'-----------------------------------------------------------------------------------
'----- Data Table: "Dat24Hr" , Interval: 24Hr --------------------------------------
'-----------------------------------------------------------------------------------
DataTable(Dat24Hr,True,-1)
  DataInterval(0,1440,Min,10)
  '----------------------------------------------------------------------
  Average(1,HWSpd1_ms,FP2,False)  ' Avg RMY05305 (1) Wind Speed
  Average(1,HWSpd2_ms,FP2,False)  ' Avg RMY05305 (2) Wind Speed
  Average(1,HWSpd3_ms,FP2,False)  ' Avg RMY05305 (3) Wind Speed
  '----------------------------------------------------------------------
  Sample (1,HWSpd1Max24Hr,FP2)  ' Max 24Hr RMY05305 (1) Wind Speed
  Sample (1,HWSpd2Max24Hr,FP2)  ' Max 24Hr RMY05305 (2) Wind Speed
  Sample (1,HWSpd3Max24Hr,FP2)  ' Max 24Hr RMY05305 (3) Wind Speed
  '----------------------------------------------------------------------
  Sample (1,HWDir1Max24Hr,FP2)  ' Max 24Hr RMY05305 (1) Direction
  Sample (1,HWDir2Max24Hr,FP2)  ' Max 24Hr RMY05305 (2) Direction
  Sample (1,HWDir3Max24Hr,FP2)  ' Max 24Hr RMY05305 (3) Direction
  '----------------------------------------------------------------------
  Sample (2,HW1Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (1) time HH,MM
  Sample (2,HW2Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (2) time HH,MM
  Sample (2,HW3Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (3) time HH,MM
  '----------------------------------------------------------------------
  Sample (1,HWSpd1_max1min,FP2)  'Max 1min sustained RMY05305 (1) Wind Speed
  Sample (1,HWDir1_max1min,FP2)  'Max 1min sustained RMY05305 (1) Wind Direction
  Sample (2,HWTime1_max1min(4),FP2)  'Max 1min sustained RMY05305 (1) time HH,MM
  '----------------------------------------------------------------------
  Maximum(1,AirTemp1_DegC,FP2,False,True)  'Max MetOne061 (1) Air Temp & time HH,MM
  FieldNames("AirTemp1_DegC_MAX,AirTemp1_DegC_TMax")
  Minimum(1,AirTemp1_DegC,FP2,False,True)  'Min MetOne061 (1) Air Temp & time HH,MM
  FieldNames("AirTemp1_DegC_MIN,AirTemp1_DegC_TMin")
  '----------------------------------------------------------------------
  Maximum(1,RotronAirT_DegC,FP2,False,False)  'Max Rotron MP101A AirTemp
  Minimum(1,RotronAirT_DegC,FP2,False,False)  'Min Rotron MP101A AirTemp
  Average(1,RotronAirT_DegC,FP2,False)  'Avg Rotron MP101A AirTemp
  '----------------------------------------------------------------------
  Maximum(1,DewPt_DegC,FP2,False,False)  'Max DewPoint
  Minimum(1,DewPt_DegC,FP2,False,False)  'Min DewPoint
  Average(1,DewPt_DegC,FP2,False)  'Avg Dew Point
  '-------------------------------------------------------------
  Maximum (1,RotronRH_percent,FP2,False,False)
  Minimum (1,RotronRH_percent,FP2,False,False)
  Average (1,RotronRH_percent,FP2,False)
  '-------------------------------------------------------------
  Totalize(1,Rain_inch,FP2,False)  'Total AW60103 rain
  FieldNames("Rain_TOTinch")
  '-------------------------------------------------------------
  '  Average(1,EppPSP1_Wm2,IEEE4,False)  'Avg PSP1 solar radiation
  '  FieldNames("EppPSP1_AVGWm2")
  Totalize(1,EppPSP1_MJm2,IEEE4,False)  'Total PSP1 flux density
  FieldNames("EppPSP1_TOTMJm2")
  '----------------------------------------------------------------------
  Minimum(1,BattV,FP2,False,False)  ' Min Battery Voltage
  FieldNames("BattV_MINVolt")
  Minimum(1,PTemp_C,FP2,False,False)  ' Min datalogger Panel Temperature
  FieldNames("PTemp_MINDegC")
  Maximum(1,PTemp_C,FP2,False,False)  ' Max datalogger Panel Temperature
  FieldNames("PTemp_MAXDegC")
  '----------------------------------------------------------------------
  Average (1,FuelM10Hr_prct,FP2,False)
  Minimum (1,FuelM10Hr_prct,FP2,False,False)
  Maximum (1,FuelM10Hr_prct,FP2,False,False)
  Average (1,FuelTempC,FP2,False)

  Average (1,FuelM1Hr_prct,FP2,False)
  Minimum (1,FuelM1Hr_prct,FP2,False,False)
  Maximum (1,FuelM1Hr_prct,FP2,False,False)

  Average (1,FuelM100Hr_prct,FP2,False)
  Minimum (1,FuelM100Hr_prct,FP2,False,False)
  Maximum (1,FuelM100Hr_prct,FP2,False,False)
  Sample (1,FuelM100Hr_prct,FP2)

  Average (1,FuelM1000Hr_prct,FP2,False)
  Minimum (1,FuelM1000Hr_prct,FP2,False,False)
  Maximum (1,FuelM1000Hr_prct,FP2,False,False)
EndTable
'***********************************************************************************
'15 minute table to store values that will be sent to Public table every 15 minutes
'===========================================================================
'Added by JCR 1/26/18
DataTable (Public15,True,1)
  DataInterval (0,15,Min,10)
  Totalize (1,Rain_inch,FP2,False)
  Maximum (1,HWSpd1_ms,FP2,HWSpd1_ms=NAN,False)
  Average (1,WindChill_C,FP2,False)
EndTable
'===========================================================================
'***********************************************************************************
'
'=========================================================================
Sub Stability
  'Find Vertical Pasquill-Gifford Stability Category
  Select Case SigmaPhi
  Case < 2.890
    V_PGCat = "F"
  Case < 6.022
    V_PGCat = "E"
  Case <9.394
    V_PGCat = "D"
  Case < 12.043
    V_PGCat = "C"
  Case < 13.85
    V_PGCat = "B"
  Case >=13.85
    V_PGCat = "A"
  End Select
  If Sun = True Then
    If V_PGCat = "A" Then
      Select Case u
      Case < 3
        V_PGCat = "A"
      Case < 4
        V_PGCat = "B"
      Case < 6
        V_PGCat = "C"
      Case >=6
        V_PGCat = "D"
      EndSelect
    ElseIf V_PGCat = "B" Then
      Select Case u
      Case < 4
        V_PGCat = "B"
      Case < 6
        V_PGCat = "C"
      Case >=6
        V_PGCat = "D"
      EndSelect
    ElseIf V_PGCat = "C" Then
      If u >= 6 Then V_PGCat = "D"
    ElseIf V_PGCat = "D" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "E" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "F" Then
      V_PGCat = "D"
    EndIf
  Else
    If V_PGCat = "A" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "B" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "C" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "D" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "E" Then
      If u >= 5 Then V_PGCat = "D"
    ElseIf V_PGCat = "F" Then
      Select Case u
      Case < 3
        V_PGCat = "F"
      Case < 5
        V_PGCat = "E"
      Case >=5
        V_PGCat = "D"
      EndSelect
    EndIf
  EndIf
  'Find Lateral Pasquill-Gifford Stability Category
  Select Case SigmaTheta
  Case < 4.576
    H_PGCat = "F"
  Case < 9.032
    H_PGCat = "E"
  Case <15.054
    H_PGCat = "D"
  Case < 21.075
    H_PGCat = "C"
  Case < 27.097
    H_PGCat = "B"
  Case >=27.097
    H_PGCat = "A"
  End Select
  If Sun = True Then
    If H_PGCat = "A" Then
      Select Case u
      Case < 3
        H_PGCat = "A"
      Case < 4
        H_PGCat = "B"
      Case < 6
        H_PGCat = "C"
      Case >=6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "B" Then
      Select Case u
      Case < 4
        H_PGCat = "B"
      Case < 6
        H_PGCat = "C"
      Case >=6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "C" Then
      If u >= 6 Then H_PGCat = "D"
    ElseIf H_PGCat = "D" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "E" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "F" Then
      H_PGCat = "D"
    EndIf
  Else
    If H_PGCat = "A" Then
      Select Case u
      Case < 2.9
        H_PGCat = "F"
      Case < 3.6
        H_PGCat = "E"
      Case >= 3.6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "B" Then
      Select Case u
      Case < 2.4
        H_PGCat = "F"
      Case < 3
        H_PGCat = "E"
      Case >= 3
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "C" Then
      Select Case u
      Case < 2.4
        H_PGCat = "E"
      Case >= 2.4
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "D" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "E" Then
      If u >= 5 Then H_PGCat = "D"
    ElseIf H_PGCat = "F" Then
      Select Case u
      Case < 3
        H_PGCat = "F"
      Case < 5
        H_PGCat = "E"
      Case >=5
        H_PGCat = "D"
      EndSelect
    EndIf
  EndIf
EndSub
' End of subroutine to calculate P-G Stability Category
'=========================================================================

'###################################################################################
'##### Main Program ################################################################
'###################################################################################
'Main Scan -----------------------------------------------------------------------
BeginProg
  Scan(3,Sec,1,0)
    '---------------------------------------------------------------------
    ' Datalogger Battery Voltage measurement 'BattV'
    Battery(BattV)
    ' Datalogger Wiring Panel Temperature measurement 'PTemp_C'
    PanelTemp(PTemp_C,_60Hz)
    '---------------------------------------------------------------------
    'All Weather Rain Gauge wired to a control port, measurement 'Rain_inch'
    PulseCount(Rain_inch,1,4,2,0,0.01,0)
    '---------------------------------------------------------------------
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (1)
    '  Wind Speed & Direction Sensor measurements 'HWSpd1_ms' and 'HWDir1_deg'
    PulseCount(HWSpd1_ms,1,1,1,1,0.1024,0)
    BrHalf(HWDir1_deg,1,mV5000,1,1,1,5000,True,0,_60Hz,355,0)
    If HWDir1_deg>=360 OR HWDir1_deg<0 Then HWDir1_deg=0
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (2)
    '  Wind Speed & Direction Sensor measurements 'HWSpd2_ms' and 'HWDir2_deg'
    PulseCount(HWSpd2_ms,1,2,1,1,0.1024,0)
    BrHalf(HWDir2_deg,1,mV5000,2,1,1,5000,True,0,_60Hz,355,0)
    If HWDir2_deg>=360 OR HWDir2_deg<0 Then HWDir2_deg=0
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (3)
    '  Wind Speed & Direction Sensor measurements 'HWSpd3_ms' and 'HWDir3_deg'
    PulseCount(HWSpd3_ms,1,3,1,1,0.1024,0)
    BrHalf(HWDir3_deg,1,mV5000,3,1,1,5000,True,0,_60Hz,355,0)
    If HWDir3_deg>=360 OR HWDir3_deg<0 Then HWDir3_deg=0
    '---------------------------------------------------------------------
    ' Determine the HWSpeed, Direction & Time of Max Gust 4-levels
    ' for a 24Hr period
    If HWSpd1_ms > HWSpd1Max24Hr Then
      HWSpd1Max24Hr = HWSpd1_ms
      HWDir1Max24Hr = HWDir1_deg
      RealTime (HW1Max24HrTime())
    EndIf
    '
    If HWSpd2_ms > HWSpd2Max24Hr Then
      HWSpd2Max24Hr = HWSpd2_ms
      HWDir2Max24Hr = HWDir2_deg
      RealTime (HW2Max24HrTime())
    EndIf
    '
    If HWSpd3_ms > HWSpd3Max24Hr Then
      HWSpd3Max24Hr = HWSpd3_ms
      HWDir3Max24Hr = HWDir3_deg
      RealTime (HW3Max24HrTime())
    EndIf
    '=======================================================================
    If Dat15min.EppPSP1_AVGWm2 < 6 Then 'Night should be considered <6 W/m2 from shortwave down measurement
      Sun = False
    Else
      Sun = True
    EndIf
    '=======================================================================
    '
    '---------------------------------------------------------------------
    '  RMYoung 27106T Wind Speed Sensor (1)
    '  Wind Speed Sensor measurements 'VWSpd1_ms'
    VoltSe(VWSpd1_ms,1,mV5000,5,True,0,_60Hz,0.0225,0)
    '  RMYoung 27106T Wind Speed Sensor (2)
    '  Wind Speed Sensor measurements 'VWSpd2_ms'
    VoltSe(VWSpd2_ms,1,mV5000,6,True,0,_60Hz,0.0225,0)
    '  RMYoung 27106T Wind Speed Sensor (3)
    '  Wind Speed Sensor measurements 'VWSpd3_ms'
    VoltSe(VWSpd3_ms,1,mV5000,7,True,0,_60Hz,0.0225,0)
    '---------------------------------------------------------------------
    '  MetOne 061 Air Temp Sensor(1)
    '  measurements 'AirTemp1_DegC'    '  MetOne 061 Air Temp Sensor(1)
    BrHalf(AirTemp1_DegC,1,mV1000,9,2,1,1000,True,20000,_60Hz,-147.0588,95.7353)
    '=======================================================================
    temp0_F = 1.8*AirTemp1_DegC + 32 'Convert air temp to deg F for wind chill calculation
    speed1_mph = 2.23694*HWSpd1_ms 'Convert level 1 wind speed to mph for wind chill calculation
    WindChill_F = 35.74 + (0.6215*temp0_F) - (35.75*speed1_mph^0.16) + (0.4275*temp0_F*speed1_mph^0.16)
    WindChill_C = (WindChill_F -32)/1.8 'Convert wind chill to deg C
    '=======================================================================
    '  MetOne 061 Air Temp Sensor(2)
    '  measurements 'AirTemp2_DegC'
    BrHalf(AirTemp2_DegC,1,mV1000,10,2,1,1000,True,20000,_60Hz,-147.0588,95.7353)
    '  MetOne 061 Air Temp Sensor(3)
    '  measurements 'AirTemp3_DegC'
    BrHalf(AirTemp3_DegC,1,mV1000,11,2,1,1000,True,20000,_60Hz,-147.0588,95.7353)
    '  MetOne 061 Air Temp Sensor(4)
    '  measurements 'AirTemp4_DegC'
    BrHalf(AirTemp4_DegC,1,mV1000,12,2,1,1000,True,20000,_60Hz,-147.0588,95.7353)
    '---------------------------------------------------------------------
    '  Rotronics MP101A Air Temp & RH Sensor (constant power)
    '  measurements 'RotronAirT_DegC' and 'RotronRH_percent'
    VoltSe(RotronAirT_DegC,1,mV1000,14,0,0,_60Hz,0.1,-40)
    VoltSe(RotronRH_percent,1,mV1000,15,0,0,_60Hz,0.1,0)
    '    If RotronRH_percent>100 AND RotronRH_percent<103 Then RotronRH_percent=100
    '-------------------------------------------------------------------------
    ' To Do: !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    ' Go To "Declare Variable" Section and enter values for;
    '  Const PSP1Cal=?.??  '* Enter PSP1Cal = Eppley SensitivityCal Constant in microVolt/WM^2
    '  Const PSP2Cal=?.??  '* Enter PSP2Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
    '!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    ' Eppley PSP1 Precision Spectral Pyranometer (1)
    ' measurements 'EppPSP1_MJm2' and 'EppPSP1_Wm2'
    VoltDiff(EppPSP1_measure,1,mV20,9,True,0,_60Hz,1000,0)
    EppPSP1_Wm2=EppPSP1_measure/PSP1Cal  'ans in W/m2
    EppPSP1_MJm2=(EppPSP1_Wm2/1000000)*PScan  'ans in MJ/m2
    'If EppPSP1_Wm2<0 Then EppPSP1_Wm2=0
    '-------------------------------------------------------------------------
    '
    '***********************************************************************************
    ' Dew Point calculation 'DewPt_DegC' ***********************************************
    ' Air temperature and relative humidity (%) measurements are required for this calculation.
    ' Therefore, air temperature and relative humidity (%) sensors must be selected and
    ' configured before selecting and configuring this calculation.
    '
    'The equation used to calculate dew point is:
    ' Td=(241.88*ln(P/0.61078))/(17.558-ln(P/0.61078))
    ' where
    ' Td = dew point (Deg C)
    ' and P = vapor pressure (kPa)
    '
    'The equation Is an inverse of a version of Teten's equation (Tetens, O. 1930. Z. Geophys.,
    ' 6:297), optimized for dew points in the range -35 to 50 Deg C, and is accurate to within
    ' plus or minus 0.1 Deg C within that range.
    '
    ' Vapor pressure is calculated by the datalogger with the following equation:
    ' P=RH*Psw/100
    ' where
    ' RH = relative humidity (%)
    ' Psw = saturation vapor pressure (kPa) over water

    ' Saturation vapor pressure over water is calculated by the datalogger with the following
    ' approximating polynomial (see Lowe, P.R. 1977. J. Appl. Meteor., 16:100-103):
    ' Psw=6.107799961+T*(4.436518521*10^-1+T*(1.428945805*10^-2+T*(2.650648471*10^-4+T*(3.031240396*10^-6+T*(2.034080948*10^-8+6.136820929*10^-11*T)))))
    ' where
    ' T = air temperature (dry-bulb temperature) (Deg C)
    ' Some datalogger models have built in instructions for calculating P and Psw using the
    ' above equations (e.g. CRBasic DewPoint instruction and Edlog P56 instruction), others
    ' do not and will include the complete equations in the resulting datalogger program.

    ' Campbell Scientific has a "Calculating Dew Point from RH and Air Temperature"
    ' Application Note at
    ' ftp://ftp.campbellsci.com/pub/csl/outgoing/uk/technotes/16_oct05.pdf
    '***********************************************************************************
    AirTC=AirTemp1_DegC
    DewPoint(DewPt_DegC,AirTC,RotronRH_percent)
    If DewPt_DegC>AirTC OR DewPt_DegC=NAN Then DewPt_DegC=AirTC
    '-------------------------------------------------------------------------
    ' CS505 Fuel Moisture Sensor (constant power) measurements
    PortSet(5,1) ' Power on the fuel moisture sensor
    PeriodAvg(FuelM10Hr_uS,1,mV1000,25,0,0,100,10,1,0)
    PortSet(5,0)
    If FuelM10Hr_uS <= 17.7 Then
      FuelM10Hr_prct=7.6298*FuelM10Hr_uS-130.0904
    Else
      FuelM10Hr_prct=0.0406*FuelM10Hr_uS^2+3.7685*FuelM10Hr_uS-73.7974
    EndIf
    ' CS205 Fuel Temperature Sensor measurement
    Therm107 (FuelTempC,1,26,Vx1,0,_60Hz,1,0)

    ' Source of previous calculation of EMC and 1 hr fuel moisture is unknown, so
    '   switched to calculations from Cohen and Deeming reference instead.
    '   The differences in 1 hr fuel moisture were found to be small.
    ' December 2021 - Ken Waight

    ' New calculation of EMC and 1 hr fuel moisture.
    ' Cohen, J.D. and J.E. Deeming, 1982?: The National Fire Danger Rating System: basic equations.
    '   General Technical Report PSW-82, U.S. Forest Service, Pacific Southwest Forest and Range
    '   Experimental Station.
    ' December 2021 - Ken Waight
    AirTemp1_DegF = (1.8*AirTemp1_DegC)+32
    If RotronRH_percent < 10 Then
      EMC = 0.03229 + 0.281073*RotronRH_percent - 0.000578*AirTemp1_DegF*RotronRH_percent
    ElseIf RotronRH_percent>=10 AND RotronRH_percent < 50 Then
      EMC = 2.22749 + 0.160107*RotronRH_percent - 0.014784*AirTemp1_DegF
    ElseIf RotronRH_percent>= 50 Then
      EMC = 21.0606 + 0.005565*RotronRH_percent*RotronRH_percent - 0.00035*RotronRH_percent*AirTemp1_DegF - 0.483199*RotronRH_percent
    EndIf
    FuelM1Hr_prct = (4.12*EMC+FuelM10Hr_prct)/5.0

    If TimeIntoInterval(1,15,min)Then
      If Sun = True Then SunHourDuration = SunHourDuration+15
      Daylit = SunHourDuration/60'calculate hours of sun duration for a day
      If Dat15min.Rain_TOTinch > 0 Then Daily_Precip_Time = Daily_Precip_Time + 15
    EndIf

    CallTable EMC_Vals

    If TimeIntoInterval(1439,1440,min) Then
      '100 Hr Fuel Moisture
      FuelM100Hr_Yest = Dat24Hr.FuelM100Hr_prct(1,1)
      If FuelM100Hr_Yest = NAN Then FuelM100Hr_Yest = 15 '(5 + 5*CLIMAT) where CLIMAT is regional and = 2
      '1st time through set to 10% so calc doesn't = NAN
      PPTDUR = Daily_Precip_Time/60 'Get time of precip in hours
      EMCBar = (Daylit*EMC_Vals.EMCMin(1,1) + (24.0-Daylit)*EMC_Vals.EMCMax(1,1))/24.0
      BNDRYH = ((24.0-PPTDUR)*EMCBar + PPTDUR*(0.5*PPTDUR + 41.0))/24.0
      FuelM100Hr_prct = FuelM100Hr_Yest+(BNDRYH-FuelM100Hr_Yest)*(1.0-0.87*EXP(-0.24))

      '1000 Hr Fuel Moisture
      'Calculate average of BNDRYT over previous seven days.
      BDYBAR = (BNDRYT(1)+BNDRYT(2)+BNDRYT(3)+BNDRYT(4)+BNDRYT(5)+BNDRYT(6)+BNDRYT(7)) / 7.0
      'PM1000 is the fuel moisture from seven days ago.
      PM1000 = MC1000(1)
      'Calculate new value of 1000 hr fuel moisture.
      FuelM1000Hr_prct = PM1000 + (BDYBAR-PM1000)*(1.00-0.82*EXP(-.168))
      'Now shift the arrays of BNDRYT and MC1000 forward one day, dropping the values
      '  from 7 days ago.
      For i = 1 To 6
        BNDRYT(i) = BNDRYT(i+1)
        MC1000(i) = MC1000(i+1)
      Next i
      'Add new values of 24 hr boundary condition and fuel moisture to the end of arrays.
      BNDRYT(7) = ((24.0-PPTDUR)*EMCBar + PPTDUR*(2.7*PPTDUR + 76.0))/24.0
      MC1000(7) = FuelM1000Hr_prct
      'Reset precip variables at end of each day.
      Daily_Precip_Time = 0.0
    EndIf

    If TimeIntoInterval (0,1,Day) Then
      SunHourDuration = 0
      Daylit = 0''MH 10/18  added this so it gets zeroed out at the end of day
    EndIf

    '----------------------------------------------------------
    ' Read Time every 1minute ---------------------------------
    If TimeIntoInterval (0,1,Min) Then
      RealTime (HWTime1_1min())
    EndIf
    '
    '--------------------------------------------------------------------
    'Call Output Tables --------------------------------------------------
    CallTable Dat1min
    '----------------------------------------------------------------------
    ' Redirect DatTable "Dat1min" variables to program variables ----------
    HWSpd1_1min = Dat1min.HWSpd1_ms_WVc(1,1)
    HWDir1_1min = Dat1min.HWSpd1_ms_WVc(2,1)
    '----------------------------------------------------------------------
    ' Determine the HWSpeed, HWDirection & Time of Max 1min sustained gust 1-level
    ' for a 24Hr period and store into program varialbes for a 24Hr period
    If HWSpd1_1min > HWSpd1_max1min Then
      HWSpd1_max1min = HWSpd1_1min
      HWDir1_max1min = HWDir1_1min
      HWTime1_max1min(4) = HWTime1_1min(4)
      HWTime1_max1min(5) = HWTime1_1min(5)
    EndIf
    '---------------------------------
    'Call Data Tables and Store Data
    '---------------------------------
    CallTable(Dat15min)
    CallTable(Dat24Hr)
    '=======================================================================
    CallTable(Public15) 'Added 1/26/18 by JCR for 15 minute Public table variables
    If IfTime(0,15,min) Then
      'Calculate stability (sigma phi and sigma theta) at level 1 only in the Public table every 15 minutes
      'Calculate stdev of vertical and horizontal wind
      SigmaPhi = (Dat15min.VWSpd1_StdDev(1,1)/Dat15min.HWSpd1_AVGms(1,1))*57.2958
      SigmaTheta = Dat15min.HWDir1_StdDev(1,1)
      u = Dat15Min.HWSpd1_AVGms(1,1)
      Call Stability

      PrecipToday=PrecipToday + Public15.Rain_inch_TOT
      WindChill_15min=Public15.WindChill_C_AVG
      If Public15.HWSpd1_ms_MAX>MaxGustToday Then
        MaxGustToday=Public15.HWSpd1_ms_MAX
      EndIf
    EndIf
    '=======================================================================
    '---------------------------------------------------------------------
    ' At the beginning of a new day reset 24Hr variables
    If TimeIntoInterval (0,1,Day) Then
      HWSpd1_max1min = 0
      HWDir1_max1min = 0
      HWTime1_max1min(4) = 0
      HWTime1_max1min(5) = 0

      HWSpd1Max24Hr=0
      HWDir1Max24Hr=0
      HW1Max24HrTime(4)=0  'hour
      HW1Max24HrTime(5)=0  'minute
      '
      HWSpd2Max24Hr=0
      HWDir2Max24Hr=0
      HW2Max24HrTime(4)=0  'hour
      HW2Max24HrTime(5)=0  'minute
      '
      HWSpd3Max24Hr=0
      HWDir3Max24Hr=0
      HW3Max24HrTime(4)=0  'hour
      HW3Max24HrTime(5)=0  'minute
      '
      HWSpd4Max24Hr=0
      HWDir4Max24Hr=0
      HW4Max24HrTime(4)=0  'hour
      HW4Max24HrTime(5)=0  'minute
      PrecipToday=0
      MaxGustToday=0
      '=========================================================================
    EndIf
  NextScan
EndProg
