'CR3000 TA6
'
'Title:  TA6V13_1.CR#
'
'
'###################################################################################
'########## Program Comments #######################################################
'###################################################################################
'
'
'
''Date: 1 March 2023 Program Update to  Version 13_1.
'Changed out Eppley Sensors and associated multiplers
' LWDN was 2.76, new multiplier 3.30 SN-28522F3
' LWUP was 3.06, new multiplier 4.11 SN-28135F3
' SWUP was 9.46, new multiplier 11.12 SN-16819
' SWDN was 8.11, new multiplier 10.49 SN-23161
'
'
'
'TA6V13_11302022 (adjusting SR50 Const. DistToGround-ZeroRef. to minimize negative
'bias showing up in data request files from wwwpage requests.
'TA6V1208302022 (as of 08-30-22 updated replaced LWUP PIR)
'TA6V1205252022 (as of 05-25-22 updated Temp Sensors & Resistors)gts
'TA6V11R0FuelMoistureC506ChangesMHansenkw8.CR3
'TA6_V11-R0_FuelMoisture-C506ChangesMHansen.CR3
'
'
'
'
'
'Date: 08-30-22, replaced LWUP PIR and updated multiplier
' multiplier was 3.06 but now is 3.66.
'
'  
'Date: 05-25-22 gts updated title/name & updated slope & intercept for new temp sensors
'model 061 MetOne.  New Title TA6V12-5252022.
'
'
'Date: 10/04/2021 gts updated title/name.
'TA6_V11-R0Added Fuel Moisture calc for 100 & 1000 hr fuels & Updated to C506 Module.
'
'
' Date:  July 7, 2020
' New Program Ver. TA6_V10-3.CR3
' Changed Out Eppley Sensors & adjusted multipliers.
' LWUP/PIR2 was previously 4.17 is now 3.06
' LWDN/PIR1 was previously 3.37 is now 2.76
' SWDN/PSP1 was previously 8.62 is now 8.11
' SWUP/PSP2 was previously 7.90 is now 9.46
'Old Program Ver. TA6_V10_2.CR3
'
'
'
'Date:  Oct 16, 2019
'New Program Version TA6_V10_2.CR3
'GTStanton Replaced SR50 Sensor & needed to adjust Distance to Ground Offset.
'Changed Distance to Ground Offset from 78.09 to 78.60 to zero sensor.
'
'Date:  Jan 25, 2019
' New Program Version TA6_V10_1.CR3
' Previous Program Version TA6_V10.CR3
' D. Bruggeman corrected Midnite Air Temp call-up in the program
' changing the midnight air temperature from RotronAirT_DegC to AirTemp1_AVGDegC
' midnight temperature should be measured from level 0 temperature
'
'
'
' Date: Jan 26, 2018
' New Program: TA6_V10.CR3
' Old Program: TA6_V9.CR3
'
'
'===========================================================================
'Version:10   14 March 2018 Jason Ritter (JCR), Campbell Scientific
'Updated program to version 10, adding the following Public variables
'Midnt_air_temp_C - midnight 15 minute temperature at level 0
'Midnt_RH - midnight relative humidity reading
'Midnt_snow_in - midnight 15 minute snow depth

'Updated program to version 8, adding the following Public variables
'PrecipToday - Precipitation since midnight, updated every 15 minutes
'MaxGustToday - Maximum wind gust since midnight (speed at level 1 only), updated
'every 15 minutes
'WindChill_C - Wind chill at level 1 only, deg C, updated every 15 minutes,
'calculated with:
' WindChill = 35.74 + (0.6215*temp0) - (35.75*speed1^0.16) + (0.4275*temp0*speed1^0.16)
' with speed1 in mph and temp0 in deg F
' Then WindChill_C = (WindChill -32)/1.8
'SigmaPhi &
'SigmaTheta-stability at level 1 only, nighttime shortwave down measurement <6 W/m2
'
'Modify datalogger program at TA-06 to:
'a. Estimate hourly snowfall for the Public tables every hour.
'   See attached for calculation.
'b. Output snowfall since midnight into Public table.
'c. Output daily snowfall into 24 hour file.
'd. Output midnight temperature into 24 hour file.

'Added snowfall estimation including Public table variables
'Public SnowDepth_in,Dist2Target, Snow(3),SnowDepth_in_Avg
'Dim i, Snow_15min(8)
'Dim SmoothSnow(6)
'Dim SnowDiff(4)
'Public LastHrPrecip,AirT_HrAvg,SnowHr_in, SnowToday_in
'Public SnowTrace As String
'===========================================================================
'
'
'
'
'Version 7: 07312017_GTStanton, Updated PIR2(LWUP)Eppley Constant to 4.17 from 3.75,
' installed SN28135F3 removed SN281125F3.
'Version 6:  07032017_GTStanton, Adjusting Distance to Ground (Ref. Surface Offset)
' for SR50; 78.09.
'Version 6:  GTStanton, Adjusting Distance to Ground (Reference Surface Offset)
' for SR50; 77.73.
'Version 6:  GTStanton, Adjusting Distance to Ground (Reference Surface Offset) for
' SR50; 77.87.
'Version 6: Jacob Davis, CSI; Changed SR50 code to use SDI12 instead of pulse train out.
''
' Version 5;  updated SR50 Snow Sensor offset to 80.355 from 80.40 to
' re-zero distance to ground surface (GTS).
''
'Version: 4_1 09-08-2016 --GTStanton, LANL Met Tech.
'Confirmed the change of the BrHalf Measurement settings to False from True for wind
' directions & Air Temps this has corrected
'the deviations in wind direction readings we have seen since implementing
'the CR3000 logger replaceing the CR7 Loggers.  Went Through and confirmed BrHalf Meas
'for Air Temp & Wind Directions are now FALSE.
'Made further refinement adjustment to the SR50 Snow Sensor for zeroing and
't-shooting, after sensor failure.
'The additional varistors installed at this site for lightning protection seem
'to affect the dual swing excitation/scaling of the BRHalf operation.
'
'Version: 4  07-14-2016  --GTStanton, LANL
'Corrected error in 15Min Data Table for L-4 Wind Direction Averaging; was directed
' to L-4 Wind Speed incorrectedly
'Also identified that the BrHalf Measurement setting of True instead of False
'may be introducing error into the Wind Direction Measurement Averages,
'as a result of the Negative Voltage Excitation Swing.
' I am changing one of the Wind Direction & One of the Air Temp Settings
' to FALSE to see if it generates
'the averages more correctly to meld with our historical program data sets.
'
'
'Still Version 3 for deployment; updated 07072016 Eppley Sensor constants to new
' hardware as installed.
' LWUP/PIR2 was previously 3.66 is now 3.75
' LWDN/PIR1 was previously 3.37 is now 3.37
' SWDN/PSP1 was previously 8.62 is now 8.62
' SWUP/PSP2 was previously 9.39 is now 7.90
'----Nothing Further At this time---- GTStanton
'
'Version:  3  August 20, 2015  GTStanton
'Updated Solar Sensor Constants/Multipliers
'Adjusted Vertical Wind Multiplier for the Cosine Measurement Effect 1.25/0.0225
'Corrected Wm2 multiplier from 1E5 to 1E6
'
'Version: 2 August 18, 2015 - Jacob Davis, CSI
'  Added snow depth measurement

'Version: 2 August 17, 2015 - Jacob Davis, CSI
'    Wholesale renaming of solar radiation variables.
'     As they were called      	New Label       	Indicates
'             EppPSP1	                 SWDN	         Short Wave Down/Incoming
'             EppPSP2	                 SWUP	         Short Wave Up/Outgoing/Return
'             PIR1	                   LWDN	         Long Wave Down/Incoming
'             PIR2	                   LWUP	         Long Wave Up/Outgoing/Return
'Added RH to 24 hour table as well
'
'
' Date: Aug 13, 2014
' New Program: TA6 MainV1.CR3
' Old Program: TA6_Combined-SCW.CR3
' Comments:
' To Do: !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
' Go To "Declare Variable" Section and enter values for;
' Const PScan=?  '* Enter value for program execution interval in seconds
' Const PSP1Cal=?.??  '* Enter PSP1Cal = Eppley SensitivityCal Constant in microVolt/WM^2
' Const PSP2Cal=?.??  '* Enter PSP2Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
' Const PIR1Cal=?.??  '* Enter PIR1Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
' Const PIR2Cal=?.??  '* Enter PIR2Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2

'!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!

'^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^
'*Install Note: Setup & test communication and sensor measurements in
' lab/office prior to field deployment!
'^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^
'---------------------------------
' Date: July 11, 2014
' Program: TA6_Combined-SCW.CR3
' Comments: Started-Created by Short Cut (3.0)
'---------------------------------------------
'***********************************************************************************
'
'###################################################################################
'##### -Wiring for CR3000- #########################################################
'###################################################################################
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (1)
'    1H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P1:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (2)
'    1L:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P2:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (3)
'    2H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P3:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (4)
'    2L:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P4:  HWspd Signal Red
'
'  RMYoung 27106T Wind Speed Sensor (1)
'    3H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (2)
'    3L:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (3)
'    4H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (4)
'    4L:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  MetOne 061 Air Temp Sensor(1) L0
'*Note: Used for Dew Point calculation
'    5H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 5H
'
'  MetOne 061 Air Temp Sensor (2) L1
'    5L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 5L
'
'  MetOne 061 Air Temp Sensor (3) L2
'    6H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 6H
'
'  MetOne 061 Air Temp Sensor (4) L3
'    6L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 6L
'
'  MetOne 061 Air Temp Sensore (5) L4
'    7H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 18.7Kohm resistor between VX2 & 7H
'
'  Rotronics MP101A Air Temp & RH Sensor (constant power)
'  Colocated at L0 Station
'    7L:  Air Temperature Siganl Red(Brown)
'    8H:  RH Signal White
'    Ground:  Signal Ground Yellow
'    Ground:  Power Ground Green
'    Ground:  Cable Shield Clear?
'    12V:  Power Blue
'  CS100 Barometric Pressure Sensor (constant power)
'    8L:  Baro Signal Out Blue
'    Ground:  Signal Ground Yellow
'    Ground:  Cable Shield Clear
'    5V:  Sensor Enable Green
'    G:  Power Ground Black
'    12V:  Power Red
'
' Eppley PSP1 (SWDN) Precision Spectral Pyranometer (1) *Note: Facing UP
'    9H:  Signal+ Green
'    9L:  Signal- Blue
' *Note: Jumper wire 9L -to- ground
'    Ground:  Cable shield Clear?
'
' Eppley PSP2 (SWUP) Precision Spectral Pyranometer (2) *Note: Facing DOWN
'    10H:  Signal+ Green
'    10L:  Signal- Blue
' *Note: Jumper wire 10L -to- ground
'    Ground:  Cable shield Clear?
'
' Eppley PIR1 (LWDN)Precision Infrared Radiometer (1) *Note: Facing UP
' Solar sensor output
'    11H:  Solar sensor Signal+ Yellow
'    11L:  Solar sensor Signal- Blue
' *Note: Jumper wire 11L -to- ground
'    Ground:  Cable shield Clear?
' Case temperatre thermistor
'    VX3: Excite *Wire a 1K resistor between VX3 & SE25
'    SE25: Thermistor signal+, White
'    Ground: Thermistor signal-, Black
'
' Eppley PIR2 (LWUP)Precision Infrared Radiometer (2) *Note: Facing DOWN
' Solar sensor output
'    12H:  Solar sensor Signal+ Yellow
'    12L:  Solar sensor Signal- Blue
' *Note: Jumper wire 12L -to- ground
'    Ground:  Cable shield Clear?
' Case temperatre thermistor
'    VX3: Excite *Wire a 1K resistor between VX3 & SE27
'    SE26: Thermistor signal+, White
'    Ground: Thermistor signal-, Black
'
'  All Weather Rain Gauge wired to a control port
'    Ground:  Cable Shield Clear?
'    *C3:  Signal+ Red
'     G:  Signal- Black
' *Note: Wire 1K ohm resistor from 5V -to- C3
'
'  CS505 Fuel Moisture Sensor (constant power)' Replaced with CS506 9/25/2021
'    SE27:  Signal Green
'    Ground:  Cable Shield Clear
'    5V:  Sensor Enable Orange
'    G:  Power Ground Black
'    12V:  Power Red
'
'CS506 Fuel Moisture Probe 'Added 9/20/2021
'    Ground:  Clear
'    SE27:  Signal- Green
'    G:  Power Ground - Black
'    C5:  Control - Orange
'    12V:  Power (+) - Red


'  CS205 Fuel Temperature Sensor
'    SE27: Temp Signal Red
'    VX4: Excite Black
'    Ground: Purple
'    Ground: Cable Shield, Clear
'
'  SR50 Snow Depth Sensor
'     G: Power Ground Black
'     12V: Power Red
'     C7: Data Bus  Green
'     C8: Sensor Enable  White
'     G: Shield Clear
'***********************************************************************************
'
'###################################################################################
'##### Declare Variables ###########################################################
'###################################################################################
Const PScan=3  'enter program execution interval in seconds
Const PSP1Cal=10.49 ' Enter PSP1Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
Const PSP2Cal=11.12 ' Enter PSP2Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
Const PIR1Cal=3.30 ' Enter PIR1Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
Const PIR2Cal=4.11 ' Enter PIR2Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
'Const SR50_offset Zero Ref. Surface SR50 transducer height in inches
Const SR50_offset = 83.4100 'SR50 transducer height in inches ' Changed 12-01-2022 GTS

SequentialMode
Dim AirTC
Public BattV, PTemp_C
Public HWSpd1_ms, HWDir1_deg, HWSpd2_ms, HWDir2_deg
Public HWSpd3_ms, HWDir3_deg, HWSpd4_ms, HWDir4_deg
Public VWSpd1_ms, VWSpd2_ms
Public VWSpd3_ms, VWSpd4_ms
Public AirTemp1_DegC, AirTemp2_DegC
Public AirTemp3_DegC, AirTemp4_DegC, AirTemp5_DegC
Public RotronAirT_DegC, RotronRH_percent
Public Rain_inch
Public BaroPres_mbar
'---------------------------------------------------------
Public SWDN_measure, SWDN_Wm2, SWDN_MJm2
Public SWUP_measure, SWUP_Wm2, SWUP_MJm2
'---------------------------------------------------------
Dim LWDN, LWUP
Public LWDNcaseRes, LWDNcaseC, LWDNuV
Public LWDN_Wm2, LWDN_MJm2,
Public LWDN_Wm2_Uncorrected
Public LWUPcaseRes, LWUPcaseC, LWUPuV
Public  LWUP_Wm2, LWUP_MJm2,
Public LWUP_Wm2_Uncorrected
Public ConstA
Public ConstB
Public ConstC
Public PIRcaseRes, PIRcaseC', PIRuV 'commented out JCR 1/16/18
Public LWDNcaseK, LWUPcaseK
'------------------------------------------------------
Public DewPt_DegC
'
Public HWSpd1Max24Hr, HWDir1Max24Hr,HW1Max24HrTime(9)
Public HWSpd2Max24Hr, HWDir2Max24Hr,HW2Max24HrTime(9)
Public HWSpd3Max24Hr, HWDir3Max24Hr,HW3Max24HrTime(9)
Public HWSpd4Max24Hr, HWDir4Max24Hr,HW4Max24HrTime(9)
'
Public HWSpd1_1min, HWDir1_1min, HWTime1_1min(9)
Public HWSpd1_max1min, HWDir1_max1min, HWTime1_max1min(9)
'-----------------------------------------------------------------
Public SWDNWm2_15min, SWUPWm2_15min,LWDNWm2_15min,LWUPWm2_15min
Public SWDNMJm2_24Hr, SWUPMJm2_24Hr,LWDNMJm2_24Hr,LWUPMJm2_24Hr
Public NetRadWm2_15min, NetRadMJm2_24Hr
'------------------------------------
Public FuelM10Hr_uS
Public FuelM10Hr_prct
Public FuelTempC
'---------------------------
Public FuelTempF,rhfuel,EMC, FuelM1Hr_prct
'---------------------------
Dim Snow15min As Boolean, SnowCount As Long,SR50Accumulator ',SR50PCount'commented out JCR 1/16/18
Public SnowDepth_in,Dist2Target, Snow(3),SnowDepth_in_Avg
'===========================================================================
'Variables added 1/26/17 by Jason Ritter for Snowfall Estimation
Dim i, Snow_15min(8)
Dim SmoothSnow(6)
Dim SnowDiff(4)
Public LastHrPrecip,AirT_HrAvg,SnowHr_in, SnowToday_in 'SnowToday_in is inches of snow since midnight
Public SnowTrace As String

'Variables added 1/26/17 by Jason Ritter for 15 minute update to Public table
Public PrecipToday, MaxGustToday,WindChill_15min
Dim WindChill_C,WindChill_F, temp0_F, speed1_mph 'Variables for wind chill calculation
Dim u
Public SigmaPhi, SigmaTheta
Public V_PGCat As String
Public H_PGCat As String
Public Sun As Boolean

'Variables added 3/14/18 by Jason Ritter for midnight value display
Public Midnt_air_temp_C, Midnt_RH, Midnt_snow_in
Units Midnt_air_temp_C = Deg C
Units Midnt_RH = %
Units Midnt_snow_in = inch
'===========================================================================
'***********************************************************************************
'
'###################################################################################
'##### Declare Units ###############################################################
'###################################################################################
Units BattV=Volts
Units PTemp_C=Deg C
Units HWSpd1_ms=meters/second
Units HWDir1_deg=degrees
Units HWSpd2_ms=meters/second
Units HWDir2_deg=degrees
Units HWSpd3_ms=meters/second
Units HWDir3_deg=degrees
Units HWSpd4_ms=meters/second
Units HWDir4_deg=degrees
Units VWSpd1_ms=meters/second
Units VWSpd2_ms=meters/second
Units VWSpd3_ms=meters/second
Units VWSpd4_ms=meters/second
Units AirTemp1_DegC=Deg C
Units AirTemp2_DegC=Deg C
Units AirTemp3_DegC=Deg C
Units AirTemp4_DegC=Deg C
Units AirTemp5_DegC=Deg C
Units RotronAirT_DegC=Deg C
Units RotronRH_percent=%
Units BaroPres_mbar=mbar
Units SWDN_measure=uV
Units SWDN_Wm2=W/m^2
Units SWDN_MJm2=MJ/m^2
Units SWUP_measure=uV
Units SWUP_Wm2=W/m^2
Units SWUP_MJm2=MJ/m^2
Units LWDN_Wm2=W/meter^2
Units LWUP_Wm2=W/meter^2
Units LWDN_MJm2=MJ/meter^2
Units LWUP_MJm2=MJ/meter^2
Units DewPt_DegC=Deg C
Units Rain_inch=inch
'-------------------------
Units FuelM10Hr_uS=microSec
Units FuelM10Hr_prct=%
Units FuelTempC=DegC
Units FuelM1Hr_prct=%
'Variables added for fuel moisture & associated calculation
Units FuelM100Hr_prct=%
Units FuelM1000Hr_prct=%
'------------------------
Units NetRadWm2_15min=W/meter^2
Units NetRadMJm2_24Hr=MJ/meter^2
'------------------------
Units SnowDepth_in_Avg = inches
Units SnowDepth_in = inches
Units Snow() = inches
'***********************************************************************************
'===========================================================================
'Units for variables added by JCR, 1/26/18
Units PrecipToday = inches
Units MaxGustToday = meters/second
Units WindChill_15min = Deg C
Units SnowToday_in = inches
'===========================================================================
'

'Public Dest(5)
'Public pressure = -1 '-1 may be used if a pressure measurement is unavailable
'Public airtemp, ptemp
'Public DeclinationDeg 'used to convert the declination from radians to degrees
'Dim Time(9)
'Alias Dest(1) = SolarAzimuth
'Alias Dest(2) = SunElevation
'Alias Dest(3) = HourAngle
'Alias Dest(4) = Declination
'Alias Dest(5) = AirMass
'Public HrAngleDeg, Local_SolarNoon
'Public SunRise, SunSet,
Public SunHourDuration

'New variables added for fuel moisture, 10/12/2021, Ken Waight from Mike Hansen's changes
Public Daily_Precip_Time ' minutes of precip in the current day
Public FuelM100Hr_Yest 'yesterdays 100Hr Fuel M
Public BNDRYH
Public PPTDUR' number of hours of precip in previous 24 Hours
Public Daylit ' number of daylight hours
Public EMCBar
Public FuelM100Hr_prct
Public FuelM1000Hr_prct
Public BNDRYT(7) = {20, 20, 20, 20, 20, 20, 20} '(10+5*Climat)
Public MC1000(7) = {20, 20, 20, 20, 20, 20, 20} '(10+5*Climat)
Public PM1000, BDYBAR
Public AirTemp1_DegF


'###################################################################################
'##### Define Data Tables ##########################################################
'###################################################################################
'-----------------------------------------------------------------------------------
'----- Data Table: "Dat1min" , Interval: 1minute --------------------------------
'----------------------------------------------------------------------------------
' *Note: This table-readings used to compute speed,direction&time of max sustained
'        1min gust using the WindVector instruction on RMY05305 (1) Wind Sensor.
DataTable(Dat1min,True,48)  '*Note: data table size fixed to 48 records
  DataInterval(0,1,Min,10)
  WindVector (1,HWSpd1_ms,HWDir1_deg,FP2,False,0,0,0)  'Wind Vector RMY05305 (1) Sensor
  '  FieldNames("HWSpd1_AVGms,HWDir1_AVGdeg,HWDir1_StdDev")
  Sample (2,HWTime1_1min(4),FP2)  'RMY05305 (1) time HH,MM
EndTable
'

DataTable(Precip,True,300)  '*Note: data table size fixed to 48 records
  DataInterval(0,5,Min,10)
  Totalize (1,Rain_inch,FP2,False)
  FieldNames("Rain_tot")
EndTable

DataTable(EMC_Vals,True,30)  '*Note: data table size fixed to 48 records
  DataInterval(1438,1440,min,10)'MH 10/18 changed timeinto interval to 1438 so values are available for calculations at 1439)
  Maximum (1,AirTemp1_DegC,FP2,False,False)
  SampleMaxMin (1,EMC,FP2,False)
  FieldNames ("EMCMin")
  Minimum (1,AirTemp1_DegC,FP2,False,False)
  SampleMaxMin (1,EMC,FP2,False)
  FieldNames ("EMCMax")
  'ktw: This is not necessary after changes? Sample (1,BNDRYT,FP2)
EndTable

'-----------------------------------------------------------------------------------
'----- Data Table: "DatNetWm15min" , Interval: 15minutes --------------------------------
'-----------------------------------------------------------------------------------
' *Note: This table-readings used to compute & redirect solar 15min data back to
'        program Public variables.
DataTable(DatNetWm15min,True,48)  '*Note: data table size fixed to 48 records
  DataInterval(0,15,Min,10)
  Average (1,SWDN_Wm2,FP2,False)
  Average (1,SWUP_Wm2,FP2,False)
  Average (1,LWDN_Wm2,FP2,False)
  Average (1,LWUP_Wm2,FP2,False)
EndTable
'
'-----------------------------------------------------------------------------------
'----- Data Table: "DatNetMJ24Hr" , Interval: 15minutes --------------------------------
'-----------------------------------------------------------------------------------
' *Note: This table-readings used to compute & redirect solar 24Hr data back to
'        program Public variables.
DataTable(DatNetMJ24Hr,True,48)  '*Note: data table size fixed to 48 records
  DataInterval(0,24,Hr,10)
  Totalize (1,SWDN_MJm2,FP2,False)
  Totalize (1,SWUP_MJm2,FP2,False)
  Totalize (1,LWDN_MJm2,FP2,False)
  Totalize (1,LWUP_MJm2,FP2,False)
EndTable

'-----------------------------------------------------------------------------------
'----- Data Table: "Dat15min" , Interval: 15minutes --------------------------------
'-----------------------------------------------------------------------------------
DataTable(Dat15min,True,-1)
  DataInterval(0,15,Min,10)
  '-----  EPA Wind Vector: Instruction "WindVector" -----------
  'mean horizontal speed, Field Name: "HWSpd1_AVGms",
  'unit vector mean direction, Field Name: "HWDir1_AVGdeg",
  '& standard deviation of direction, Field Name: "HWDir1_StdDev".
  '-------------------------------------------------------------
  WindVector (1,HWSpd1_ms,HWDir1_deg,FP2,False,0,0,0)  'RMY05305 (1) Sensor
  FieldNames("HWSpd1_AVGms,HWDir1_AVGdeg,HWDir1_StdDev")
  StdDev(1,HWSpd1_ms,FP2,False)  'StdDev RMY05305 (1) Wind Speed
  FieldNames("HWSpd1_StdDev")
  '-----  EPA Wind Vector: Instruction "WindVector" -----
  WindVector (1,HWSpd2_ms,HWDir2_deg,FP2,False,0,0,0)  'RMY05305 (2) Sensor
  FieldNames("HWSpd2_AVGms,HWDir2_AVGdeg,HWDir2_StdDev")
  StdDev(1,HWSpd2_ms,FP2,False)  'StdDev RMY05305 (2) Wind Speed
  FieldNames("HWSpd2_StdDev")
  '-----  EPA Wind Vector: Instruction "WindVector" -----
  WindVector (1,HWSpd3_ms,HWDir3_deg,FP2,False,0,0,0)  'RMY05305 (3) Sensor
  FieldNames("HWSpd3_AVGms,HWDir3_AVGdeg,HWDir3_StdDev")
  StdDev(1,HWSpd3_ms,FP2,False)  'StdDev RMY05305 (3) Wind Speed
  FieldNames("HWSpd3_StdDev")
  '-----  EPA Wind Vector: Instruction "WindVector" -----
  WindVector (1,HWSpd4_ms,HWDir4_deg,FP2,False,0,0,0)  'RMY05305 (4) Sensor
  FieldNames("HWSpd4_AVGms,HWDir4_AVGdeg,HWDir4_StdDev")
  StdDev(1,HWSpd4_ms,FP2,False)  'StdDev RMY05305 (4) Wind Speed
  FieldNames("HWSpd4_StdDev")
  '-------------------------------------------------------------
  Average(1,VWSpd1_ms,FP2,False)  'Avg RMY27106T (1) Wind Speed
  FieldNames("VWSpd1_AVGms")
  StdDev(1,VWSpd1_ms,FP2,False)  'StdDev RMY27106T (1) Wind Speed
  FieldNames("VWSpd1_StdDev")
  Average(1,VWSpd2_ms,FP2,False)  'Avg RMY27106T (2) Wind Speed
  FieldNames("VWSpd2_AVGms")
  StdDev(1,VWSpd2_ms,FP2,False)  'StdDev RMY27106T (2) Wind Speed
  FieldNames("VWSpd2_StdDev")
  Average(1,VWSpd3_ms,FP2,False)  'Avg RMY27106T (3) Wind Speed
  FieldNames("VWSpd3_AVGms")
  StdDev(1,VWSpd3_ms,FP2,False)  'StdDev RMY27106T (3) Wind Speed
  FieldNames("VWSpd3_StdDev")
  Average(1,VWSpd4_ms,FP2,False)  'Avg RMY27106T (4) Wind Speed
  FieldNames("VWSpd4_AVGms")
  StdDev(1,VWSpd4_ms,FP2,False)  'StdDev RMY27106T (4) Wind Speed
  FieldNames("VWSpd4_StdDev")
  '-------------------------------------------------------------
  Average(1,AirTemp1_DegC,FP2,False)  'Avg MetOne060A2 (1) Air Temp
  FieldNames("AirTemp1_AVGDegC")
  Average(1,AirTemp2_DegC,FP2,False)  'Avg MetOne060A2 (2) Air Temp
  FieldNames("AirTemp2_AVGDegC")
  Average(1,AirTemp3_DegC,FP2,False)  'Avg MetOne060A2 (3) Air Temp
  FieldNames("AirTemp3_AVGDegC")
  Average(1,AirTemp4_DegC,FP2,False)  'Avg MetOne060A2 (4) Air Temp
  FieldNames("AirTemp4_AVGDegC")
  Average(1,AirTemp5_DegC,FP2,False)  'Avg MetOne060A2 (5) Air Temp
  FieldNames("AirTemp5_AVGDegC")
  '-------------------------------------------------------------
  Average(1,BaroPres_mbar,FP2,False)  'Avg CSI CS100 Baro Pressure
  FieldNames("BaroPres_AVGmbar")
  '-------------------------------------------------------------
  Average(1,RotronAirT_DegC,FP2,False)  'Avg Rotron MP101A Air Temp
  FieldNames("RotronAirT_DegC")
  Average(1,RotronRH_percent,FP2,False)  'Avg Rotron MP101A Relative Humidity
  FieldNames("RotronRH_AVGpercent")
  '-------------------------------------------------------------
  Average(1,DewPt_DegC,FP2,False)  'Avg Dew Point
  FieldNames("DewPt_AVGDegC")
  '-------------------------------------------------------------
  Totalize(1,Rain_inch,FP2,False)  'Total AW60103 rain
  FieldNames("Rain_TOTinch")
  '-------------------------------------------------------------
  Average(1,SWDN_Wm2,IEEE4,False)  'Avg SWDN solar radiation
  FieldNames("SWDN_AVGWm2")
  '  Totalize(1,SWDN_MJm2,IEEE4,False)  'Total SWDN flux density
  '  FieldNames("SWDN_TOTMJm2")
  Average(1,SWUP_Wm2,IEEE4,False)  'Avg SWUP solar radiation
  FieldNames("SWUP_AVGWm2")
  '  Totalize(1,SWUP_MJm2,IEEE4,False)  'Total SWUP flux density
  '  FieldNames("SWUP_TOTMJm2")
  '----------------------------------------------------------------------
  Average(1,LWDN_Wm2,IEEE4,False)  'Avg LWDN solar radiation
  FieldNames("LWDN_AVGWm2")
  '  Totalize(1,LWDN_MJm2,IEEE4,False)  'Total LWDN flux density
  '  FieldNames("LWDN_TOTMJm2")
  Average(1,LWUP_Wm2,IEEE4,False)  'Avg LWUP solar radiation
  FieldNames("LWUP_AVGWm2")
  '  Totalize(1,LWUP_MJm2,IEEE4,False)  'Total LWUP flux density
  '  FieldNames("LWUP_TOTMJm2")
  '-------------------------------------------------------------
  Sample (1,NetRadWm2_15min,IEEE4)  '15minute NetRadiation Wm2
  '-------------------------------------------------------------
  Average (1,FuelM1Hr_prct,FP2,False)
  Average (1,FuelM10Hr_prct,FP2,False)
  Average (1,FuelTempC,FP2,False)
  '-------------------------------------------------------------
  Minimum(1,BattV,FP2,False,False)  'Min Battery Voltage
  FieldNames("BattV_MINVolt")
  Average(1,PTemp_C,FP2,False)  'Avg datalogger panel temperature
  FieldNames("PTemp_AVGDegC")
  '-------------------------------------------------------------
  Sample (1,SnowDepth_in_Avg,FP2)
  '-------------------------------------------------------------
  Sample (1,FuelM1Hr_prct,FP2)
  Sample (1,FuelM10Hr_prct,FP2)
  Sample (1,FuelTempC,FP2)

EndTable

'***********************************************************************************
'
'-----------------------------------------------------------------------------------
'----- Data Table: "Dat24Hr" , Interval: 24Hr --------------------------------------
'-----------------------------------------------------------------------------------
DataTable(Dat24Hr,True,-1)
  DataInterval(0,1440,Min,10)
  '----------------------------------------------------------------------
  Average(1,HWSpd1_ms,FP2,False)  ' Avg RMY05305 (1) Wind Speed
  Average(1,HWSpd2_ms,FP2,False)  ' Avg RMY05305 (2) Wind Speed
  Average(1,HWSpd3_ms,FP2,False)  ' Avg RMY05305 (3) Wind Speed
  Average(1,HWSpd4_ms,FP2,False)  ' Avg RMY05305 (4) Wind Speed
  '----------------------------------------------------------------------
  Sample (1,HWSpd1Max24Hr,FP2)  ' Max 24Hr RMY05305 (1) Wind Speed
  Sample (1,HWSpd2Max24Hr,FP2)  ' Max 24Hr RMY05305 (2) Wind Speed
  Sample (1,HWSpd3Max24Hr,FP2)  ' Max 24Hr RMY05305 (3) Wind Speed
  Sample (1,HWSpd4Max24Hr,FP2)  ' Max 24Hr RMY05305 (4) Wind Speed
  '----------------------------------------------------------------------
  Sample (1,HWDir1Max24Hr,FP2)  ' Max 24Hr RMY05305 (1) Direction
  Sample (1,HWDir2Max24Hr,FP2)  ' Max 24Hr RMY05305 (2) Direction
  Sample (1,HWDir3Max24Hr,FP2)  ' Max 24Hr RMY05305 (3) Direction
  Sample (1,HWDir4Max24Hr,FP2)  ' Max 24Hr RMY05305 (4) Direction
  '----------------------------------------------------------------------
  Sample (2,HW1Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (1) time HH,MM
  Sample (2,HW2Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (2) time HH,MM
  Sample (2,HW3Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (3) time HH,MM
  Sample (2,HW4Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (4) time HH,MM
  '----------------------------------------------------------------------
  Sample (1,HWSpd1_max1min,FP2)  'Max 1min sustained RMY05305 (1) Wind Speed
  Sample (1,HWDir1_max1min,FP2)  'Max 1min sustained RMY05305 (1) Wind Direction
  Sample (2,HWTime1_max1min(4),FP2)  'Max 1min sustained RMY05305 (1) time HH,MM
  '----------------------------------------------------------------------
  Maximum(1,AirTemp1_DegC,FP2,False,True)  'Max MetOne060A2 (1) Air Temp & time HH,MM
  FieldNames("AirTemp1_DegC_MAX,AirTemp1_DegC_TMax")
  Minimum(1,AirTemp1_DegC,FP2,False,True)  'Min MetOne060A2 (1) Air Temp & time HH,MM
  FieldNames("AirTemp1_DegC_MIN,AirTemp1_DegC_TMin")
  '----------------------------------------------------------------------
  Maximum(1,BaroPres_mbar,FP2,False,False)  'Max CSI_CS100 Baro Pressure
  Minimum(1,BaroPres_mbar,FP2,False,False)  'Min CSI_CS100 Baro Pressure
  '----------------------------------------------------------------------
  Maximum(1,RotronAirT_DegC,FP2,False,False)  'Max Rotron MP101A AirTemp
  Minimum(1,RotronAirT_DegC,FP2,False,False)  'Min Rotron MP101A AirTemp
  Average(1,RotronAirT_DegC,FP2,False)  'Avg Rotron MP101A AirTemp
  '----------------------------------------------------------------------
  Maximum(1,DewPt_DegC,FP2,False,False)  'Max DewPoint
  Minimum(1,DewPt_DegC,FP2,False,False)  'Min DewPoint
  Average(1,DewPt_DegC,FP2,False)  'Avg Dew Point
  '-------------------------------------------------------------
  Maximum (1,RotronRH_percent,FP2,False,False)
  Minimum (1,RotronRH_percent,FP2,False,False)
  Average (1,RotronRH_percent,FP2,False)
  '-------------------------------------------------------------
  Totalize(1,Rain_inch,FP2,False)  'Total AW60103 rain
  FieldNames("Rain_TOTinch")
  '-------------------------------------------------------------
  '  Average(1,SWDN_Wm2,IEEE4,False)  'Avg SWDN solar radiation
  '  FieldNames("SWDN_AVGWm2")
  Totalize(1,SWDN_MJm2,IEEE4,False)  'Total SWDN flux density
  FieldNames("SWDN_TOTMJm2")
  '  Average(1,SWUP_Wm2,IEEE4,False)  'Avg SWUP solar radiation
  '  FieldNames("SWUP_AVGWm2")
  Totalize(1,SWUP_MJm2,IEEE4,False)  'Total SWUP flux density
  FieldNames("SWUP_TOTMJm2")
  '----------------------------------------------------------------------
  '  Average(1,LWDN_Wm2,FP2,False)  'Avg LWDN solar radiation
  '  FieldNames("LWDN_AVGWm2")
  Totalize(1,LWDN_MJm2,IEEE4,False)  'Total LWDN flux density
  FieldNames("LWDN_TOTMJm2")
  '  Average(1,LWUP_Wm2,FP2,False)  'Avg LWUP solar radiation
  '  FieldNames("LWUP_AVGWm2")
  Totalize(1,LWUP_MJm2,IEEE4,False)  'Total LWUP flux density
  FieldNames("LWUP_TOTMJm2")
  '----------------------------------------------------------------------
  Sample (1,NetRadMJm2_24Hr,IEEE4)  '24Hr NetRadiation MJm2
  '-------------------------------------------------------------
  Average (1,FuelM1Hr_prct,FP2,False)
  Average (1,FuelM10Hr_prct,FP2,False)
  '-------------------------------------------------------------
  Minimum(1,BattV,FP2,False,False)  ' Min Battery Voltage
  FieldNames("BattV_MINVolt")
  Minimum(1,PTemp_C,FP2,False,False)  ' Min datalogger Panel Temperature
  FieldNames("PTemp_MINDegC")
  Maximum(1,PTemp_C,FP2,False,False)  ' Max datalogger Panel Temperature
  FieldNames("PTemp_MAXDegC")
  '----------------------------------------------------------------------
  '=========================================================================
  Sample (1,SnowToday_in,FP2)'Added 1/26/18, JCR, daily snowfall (in)
  '=========================================================================
  Sample (1,Midnt_air_temp_C,FP2)
  FieldNames("Midnight_AirTemp_DegC")
  Sample (1,Midnt_RH,FP2)
  FieldNames("Midnight_RH_pct")
  Sample (1,Midnt_snow_in,FP2)
  FieldNames("Midnight_snow_depth_in")

  'Average (1,FuelM1Hr_prct,FP2,False)
  Minimum (1,FuelM1Hr_prct,FP2,False,False)
  Maximum (1,FuelM1Hr_prct,FP2,False,False)
  ' Average (1,FuelM10Hr_prct,FP2,False)
  Minimum (1,FuelM10Hr_prct,FP2,False,False)
  Maximum (1,FuelM10Hr_prct,FP2,False,False)

  Average (1,FuelTempC,FP2,False)
  Minimum (1,FuelTempC,FP2,False,False)
  Maximum (1,FuelTempC,FP2,False,False)
  Sample (1,FuelM100Hr_prct,FP2)
  Sample (1,FuelM1000Hr_prct,FP2)


EndTable
'***********************************************************************************
'15 minute table to store values that will be sent to Public table every 15 minutes
'===========================================================================
'Added by JCR 1/26/18
DataTable (Public15,True,1)
  DataInterval (0,15,Min,10)
  Totalize (1,Rain_inch,FP2,False)
  Maximum (1,HWSpd1_ms,FP2,HWSpd1_ms=NAN,False)
  Average (1,WindChill_C,FP2,False)
EndTable

DataTable (Dat1Hr,True,1)'table only one record in size, holding 1 hour of data
  DataInterval (0,1,Hr,1)
  Totalize (1,Rain_inch,FP2,False)
  FieldNames("HrRain_inch")
  Average (1,AirTemp1_DegC,FP2,False)
  FieldNames("HrAirT_C")
EndTable
'===========================================================================

'###################################################################################
'##### Subroutine ##################################################################
'###################################################################################
Sub SubCase
  ' 1/T = a + b(LnR) + c(LnR)^3
  ' a = 0.0010295 = ConstA
  ' b = 0.0002391 = ConstB
  ' c = 1.568E-7 = ConstC

  ' Calc resistance
  '   *** Mutiplier = bridge completion resistor
  PIRcaseRes = 1000*(PIRcaseRes/(1.0-PIRcaseRes))
  ' calculate temperature in degrees K
  ConstA = 0.0010295
  ConstB = 0.0002391
  ConstC = 1.568E-7
  PIRcaseC = ConstA + ConstB*(LN(PIRcaseRes)) + ConstC*(LN(PIRcaseRes))^3
  PIRcaseC = 1 / PIRcaseC
  ' Temp in degrees C
  PIRcaseC = PIRcaseC - 273.15
EndSub
'
'=========================================================================
Sub Stability
  'Find Vertical Pasquill-Gifford Stability Category
  Select Case SigmaPhi
  Case < 2.890
    V_PGCat = "F"
  Case < 6.022
    V_PGCat = "E"
  Case <9.394
    V_PGCat = "D"
  Case < 12.043
    V_PGCat = "C"
  Case < 13.85
    V_PGCat = "B"
  Case >=13.85
    V_PGCat = "A"
  End Select
  If Sun = True Then
    If V_PGCat = "A" Then
      Select Case u
      Case < 3
        V_PGCat = "A"
      Case < 4
        V_PGCat = "B"
      Case < 6
        V_PGCat = "C"
      Case >=6
        V_PGCat = "D"
      EndSelect
    ElseIf V_PGCat = "B" Then
      Select Case u
      Case < 4
        V_PGCat = "B"
      Case < 6
        V_PGCat = "C"
      Case >=6
        V_PGCat = "D"
      EndSelect
    ElseIf V_PGCat = "C" Then
      If u >= 6 Then V_PGCat = "D"
    ElseIf V_PGCat = "D" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "E" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "F" Then
      V_PGCat = "D"
    EndIf
  Else
    If V_PGCat = "A" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "B" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "C" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "D" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "E" Then
      If u >= 5 Then V_PGCat = "D"
    ElseIf V_PGCat = "F" Then
      Select Case u
      Case < 3
        V_PGCat = "F"
      Case < 5
        V_PGCat = "E"
      Case >=5
        V_PGCat = "D"
      EndSelect
    EndIf
  EndIf
  'Find Lateral Pasquill-Gifford Stability Category
  Select Case SigmaTheta
  Case < 4.576
    H_PGCat = "F"
  Case < 9.032
    H_PGCat = "E"
  Case <15.054
    H_PGCat = "D"
  Case < 21.075
    H_PGCat = "C"
  Case < 27.097
    H_PGCat = "B"
  Case >=27.097
    H_PGCat = "A"
  End Select
  If Sun = True Then
    If H_PGCat = "A" Then
      Select Case u
      Case < 3
        H_PGCat = "A"
      Case < 4
        H_PGCat = "B"
      Case < 6
        H_PGCat = "C"
      Case >=6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "B" Then
      Select Case u
      Case < 4
        H_PGCat = "B"
      Case < 6
        H_PGCat = "C"
      Case >=6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "C" Then
      If u >= 6 Then H_PGCat = "D"
    ElseIf H_PGCat = "D" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "E" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "F" Then
      H_PGCat = "D"
    EndIf
  Else
    If H_PGCat = "A" Then
      Select Case u
      Case < 2.9
        H_PGCat = "F"
      Case < 3.6
        H_PGCat = "E"
      Case >= 3.6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "B" Then
      Select Case u
      Case < 2.4
        H_PGCat = "F"
      Case < 3
        H_PGCat = "E"
      Case >= 3
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "C" Then
      Select Case u
      Case < 2.4
        H_PGCat = "E"
      Case >= 2.4
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "D" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "E" Then
      If u >= 5 Then H_PGCat = "D"
    ElseIf H_PGCat = "F" Then
      Select Case u
      Case < 3
        H_PGCat = "F"
      Case < 5
        H_PGCat = "E"
      Case >=5
        H_PGCat = "D"
      EndSelect
    EndIf
  EndIf
EndSub
' End of subroutine to calculate P-G Stability Category
'=========================================================================

'
'###################################################################################
'##### Main Program ################################################################
'###################################################################################
'Main Scan -----------------------------------------------------------------------
BeginProg
  Scan(3,Sec,1,0)
    '---------------------------------------------------------------------
    ' Datalogger Battery Voltage measurement 'BattV'
    Battery(BattV)
    ' Datalogger Wiring Panel Temperature measurement 'PTemp_C'
    PanelTemp(PTemp_C,_60Hz)
    '---------------------------------------------------------------------
    'All Weather Rain Gauge wired to a control port, measurement 'Rain_inch'
    PulseCount(Rain_inch,1,13,2,0,0.01,0)
    '-------------------------------------------------------------------------
    '
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (1)
    '  Wind Speed & Direction Sensor measurements 'HWSpd1_ms' and 'HWDir1_deg'
    PulseCount(HWSpd1_ms,1,1,1,1,0.1024,0)
    BrHalf(HWDir1_deg,1,mV1000,1,1,1,1000,False,20000,_60Hz,355,0)
    If HWDir1_deg>=360 OR HWDir1_deg<0 Then HWDir1_deg=0
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (2)
    '  Wind Speed & Direction Sensor measurements 'HWSpd2_ms' and 'HWDir2_deg'
    PulseCount(HWSpd2_ms,1,2,1,1,0.1024,0)
    BrHalf(HWDir2_deg,1,mV1000,2,1,1,1000,False,20000,_60Hz,355,0)
    If HWDir2_deg>=360 OR HWDir2_deg<0 Then HWDir2_deg=0
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (3)
    '  Wind Speed & Direction Sensor measurements 'HWSpd3_ms' and 'HWDir3_deg'
    PulseCount(HWSpd3_ms,1,3,1,1,0.1024,0)
    BrHalf(HWDir3_deg,1,mV1000,3,1,1,1000,False,20000,_60Hz,355,0)
    If HWDir3_deg>=360 OR HWDir3_deg<0 Then HWDir3_deg=0
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (4)
    '  Wind Speed & Direction Sensor measurements 'HWSpd4_ms' and 'HWDir4_deg'
    PulseCount(HWSpd4_ms,1,4,1,1,0.1024,0)
    BrHalf(HWDir4_deg,1,mV1000,4,1,1,1000,False,20000,_60Hz,355,0)
    If HWDir4_deg>=360 OR HWDir4_deg<0 Then HWDir4_deg=0
    '---------------------------------------------------------------------
    ' Determine the HWSpeed, Direction & Time of Max Gust 4-levels
    ' for a 24Hr period
    If HWSpd1_ms > HWSpd1Max24Hr Then
      HWSpd1Max24Hr = HWSpd1_ms
      HWDir1Max24Hr = HWDir1_deg
      RealTime (HW1Max24HrTime())
    EndIf
    '
    If HWSpd2_ms > HWSpd2Max24Hr Then
      HWSpd2Max24Hr = HWSpd2_ms
      HWDir2Max24Hr = HWDir2_deg
      RealTime (HW2Max24HrTime())
    EndIf
    '
    If HWSpd3_ms > HWSpd3Max24Hr Then
      HWSpd3Max24Hr = HWSpd3_ms
      HWDir3Max24Hr = HWDir3_deg
      RealTime (HW3Max24HrTime())
    EndIf
    '
    If HWSpd4_ms > HWSpd4Max24Hr Then
      HWSpd4Max24Hr = HWSpd4_ms
      HWDir4Max24Hr = HWDir4_deg
      RealTime (HW4Max24HrTime())
    EndIf
    '=======================================================================
    If Dat15min.SWDN_AVGWm2 < 6 Then 'Night should be considered <6 W/m2 from shortwave down measurement
      Sun = False
    Else
      Sun = True
    EndIf
    '=======================================================================
    '---------------------------------------------------------------------
    '  RMYoung 27106T Wind Speed Sensor (1)
    '  Wind Speed Sensor measurements 'VWSpd1_ms'
    VoltSe(VWSpd1_ms,1,mV5000,5,True,0,_60Hz,0.0225,0)
    '  RMYoung 27106T Wind Speed Sensor (2)
    '  Wind Speed Sensor measurements 'VWSpd2_ms'
    VoltSe(VWSpd2_ms,1,mV5000,6,True,0,_60Hz,0.0225,0)
    '  RMYoung 27106T Wind Speed Sensor (3)
    '  Wind Speed Sensor measurements 'VWSpd3_ms'
    VoltSe(VWSpd3_ms,1,mV5000,7,True,0,_60Hz,0.0225,0)
    '  RMYoung 27106T Wind Speed Sensor (4)
    '  Wind Speed Sensor measurements 'VWSpd4_ms'
    VoltSe(VWSpd4_ms,1,mV5000,8,True,0,_60Hz,0.0225,0)
    '---------------------------------------------------------------------
    '  MetOne 060A2 Air Temp Sensor(1)
    '  measurements 'AirTemp1_DegC'    '  MetOne 060A2 Air Temp Sensor(1)
    BrHalf(AirTemp1_DegC,1,mV1000,9,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    '=======================================================================
    temp0_F = 1.8*AirTemp1_DegC + 32 'Convert air temp to deg F for wind chill calculation
    speed1_mph = 2.23694*HWSpd1_ms 'Convert level 1 wind speed to mph for wind chill calculation
    WindChill_F = 35.74 + (0.6215*temp0_F) - (35.75*speed1_mph^0.16) + (0.4275*temp0_F*speed1_mph^0.16)
    WindChill_C = (WindChill_F -32)/1.8 'Convert wind chill to deg C
    '=======================================================================
    '  MetOne 060A2 Air Temp Sensor(2)
    '  measurements 'AirTemp2_DegC'
    BrHalf(AirTemp2_DegC,1,mV1000,10,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    '  MetOne 060A2 Air Temp Sensor(3)
    '  measurements 'AirTemp3_DegC'
    BrHalf(AirTemp3_DegC,1,mV1000,11,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    '  MetOne 060A2 Air Temp Sensor(4)
    '  measurements 'AirTemp4_DegC'
    BrHalf(AirTemp4_DegC,1,mV1000,12,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    '  MetOne 060A2 Air Temp Sensor(5)
    '  measurements 'AirTemp5_DegC'
    BrHalf(AirTemp5_DegC,1,mV1000,13,2,1,1000,False,0,_60Hz,-147.0588,95.7353)
    '---------------------------------------------------------------------
    '  Rotronics MP101A Air Temp & RH Sensor (constant power)
    '  measurements 'RotronAirT_DegC' and 'RotronRH_percent'
    VoltSe(RotronAirT_DegC,1,mV1000,14,0,0,_60Hz,0.1,-40)
    VoltSe(RotronRH_percent,1,mV1000,15,0,0,_60Hz,0.1,0)
    '    If RotronRH_percent>100 AND RotronRH_percent<103 Then RotronRH_percent=100
    '---------------------------------------------------------------------
    '    CS100 Barometric Pressure Sensor measurement 'BaroPres_mbar'
    '    PortSet(1,1)
    VoltSe(BaroPres_mbar,1,mV5000,16,1,0,_60Hz,0.2,600)
    BaroPres_mbar=BaroPres_mbar*1
    '-------------------------------------------------------------------------
    ' To Do: !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    ' Go To "Declare Variable" Section and enter values for;
    '  Const PSP1Cal=?.??  '* Enter PSP1Cal = Eppley SensitivityCal Constant in microVolt/WM^2
    '  Const PSP2Cal=?.??  '* Enter PSP2Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
    '!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    ' Eppley PSP1 Precision Spectral Pyranometer (1)
    ' measurements 'SWDN_MJm2' and 'SWDN_Wm2'
    VoltDiff(SWDN_measure,1,mV20,9,True,0,_60Hz,1000,0)
    SWDN_Wm2=SWDN_measure/PSP1Cal  'ans in W/m2
    SWDN_MJm2=(SWDN_Wm2/1000000)*PScan  'ans in MJ/m2
    'If SWDN_Wm2<0 Then SWDN_Wm2=0

    ' Eppley PSP2 Precision Spectral Pyranometer (2)
    ' measurements 'SWUP_MJm2' and 'SWUP_Wm2'
    VoltDiff(SWUP_measure,1,mV20,10,True,0,_60Hz,1000,0)
    SWUP_Wm2=SWUP_measure/PSP2Cal  'ans in W/m2
    SWUP_MJm2=(SWUP_Wm2/1000000)*PScan  'ans in MJ/m2
    'If SWDN_Wm2<0 Then SWDN_Wm2=0
    If TimeIntoInterval(1,15,min)Then
      If Dat15min.SWUP_AVGWm2 < 6 Then 'Night should be considered <6 W/m2 from shortwave down measurement
        Sun = False
      Else
        Sun = True
      EndIf
      If Sun = True Then SunHourDuration = SunHourDuration+15
      Daylit = SunHourDuration/60'calculate hours of sun duration for a day
      If Dat15min.Rain_TOTinch > 0 Then Daily_Precip_Time = Daily_Precip_Time + 15
    EndIf

    '-------------------------------------------------------------------------
    ' To Do: !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    ' Go To "Declare Variable" Section and enter values for;
    '  Const PIR1Cal=?.??  '* Enter PIR1Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
    '  Const PIR2Cal=?.??  '* Enter PIR2Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
    '!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    'Temperatures - Measure YSI 44301 Resistance.
    BrHalf(PIRcaseRes,1,mv5000,25,VX3,1,1500,True,20000,_60Hz,1,0) 'Case Temperature
    'Pyrgeometer - Measure Eppley PIR
    VoltDiff(LWDNuV,1,mV20C,11,True,0,_60Hz,1000,0) 'Eppley PIR
    Call SubCase
    LWDNcaseRes=PIRcaseRes
    LWDNcaseC=PIRcaseC
    LWDNcaseK=LWDNcaseC+273.2
    '

    LWDN = LWDNuV/PIR1Cal
    LWDN_Wm2_Uncorrected = LWDN
    'Eppley Manual Eq2 LWDN_Corrected
    LWDN_Wm2= LWDN + (5.67E-8) * (LWDNcaseK)^4
    LWDN_MJm2=(LWDN_Wm2/1000000)*PScan
    '
    '--------------------------------------------------------------------------------
    'Temperatures - Measure YSI 44301 Resistance.
    BrHalf(PIRcaseRes,1,mv5000,26,VX3,1,1500,True,20000,_60Hz,1,0) 'Case Temperature
    'Pyrgeometer - Measure Eppley PIR
    VoltDiff(LWUPuV,1,mV20C,12,True,0,_60Hz,1000,0) 'Eppley PIR
    Call SubCase
    LWUPcaseRes=PIRcaseRes
    LWUPcaseC=PIRcaseC
    LWUPcaseK=LWUPcaseC+273.2
    '
    LWUP = LWUPuV/PIR2Cal
    LWUP_Wm2_Uncorrected = LWUP
    'Eppley Manual Eq2 LWDN_Corrected
    LWUP_Wm2 = LWUP + (5.67E-8) * (LWUPcaseK)^4
    LWUP_MJm2=(LWUP_Wm2/1000000)*PScan
    '
    '-------------------------------------------------------------------------
    '
    '***********************************************************************************
    ' Dew Point calculation 'DewPt_DegC' ***********************************************
    ' Air temperature and relative humidity (%) measurements are required for this calculation.
    ' Therefore, air temperature and relative humidity (%) sensors must be selected and
    ' configured before selecting and configuring this calculation.
    '
    'The equation used to calculate dew point is:
    ' Td=(241.88*ln(P/0.61078))/(17.558-ln(P/0.61078))
    ' where
    ' Td = dew point (Deg C)
    ' and P = vapor pressure (kPa)
    '
    'The equation Is an inverse of a version of Teten's equation (Tetens, O. 1930. Z. Geophys.,
    ' 6:297), optimized for dew points in the range -35 to 50 Deg C, and is accurate to within
    ' plus or minus 0.1 Deg C within that range.
    '
    ' Vapor pressure is calculated by the datalogger with the following equation:
    ' P=RH*Psw/100
    ' where
    ' RH = relative humidity (%)
    ' Psw = saturation vapor pressure (kPa) over water

    ' Saturation vapor pressure over water is calculated by the datalogger with the following
    ' approximating polynomial (see Lowe, P.R. 1977. J. Appl. Meteor., 16:100-103):
    ' Psw=6.107799961+T*(4.436518521*10^-1+T*(1.428945805*10^-2+T*(2.650648471*10^-4+T*(3.031240396*10^-6+T*(2.034080948*10^-8+6.136820929*10^-11*T)))))
    ' where
    ' T = air temperature (dry-bulb temperature) (Deg C)
    ' Some datalogger models have built in instructions for calculating P and Psw using the
    ' above equations (e.g. CRBasic DewPoint instruction and Edlog P56 instruction), others
    ' do not and will include the complete equations in the resulting datalogger program.

    ' Campbell Scientific has a "Calculating Dew Point from RH and Air Temperature"
    ' Application Note at
    ' ftp://ftp.campbellsci.com/pub/csl/outgoing/uk/technotes/16_oct05.pdf
    '***********************************************************************************
    AirTC=AirTemp1_DegC
    DewPoint(DewPt_DegC,AirTC,RotronRH_percent)
    If DewPt_DegC>AirTC OR DewPt_DegC=NAN Then DewPt_DegC=AirTC
    '-------------------------------------------------------------------------
    '-------------------------------------------------------------------------
    'CS505 Fuel Moisture Sensor (constant power) measurements 'FuelM_percent' and 'FuelM_uS'
    'CS500 removed 9/30/2021
    'PortSet(2,1)
    'PeriodAvg(FuelM10Hr_uS,1,mV5000,27,0,0,10,50,0.001,0)
    'FuelM10Hr_prct=-220.14+(365.89*FuelM10Hr_uS)+(-114.96*FuelM10Hr_uS^2)
    'PortSet(2,0)
    
    PortSet(5,1)' power on the fuel moisture sensor
  
    PeriodAvg(FuelM10Hr_uS,1,mV1000,27,0,0,100,10,1,0)

    If FuelM10Hr_uS <= 17.7 Then
      FuelM10Hr_prct=7.6298*FuelM10Hr_uS-130.0904
    Else
      FuelM10Hr_prct=0.0406*FuelM10Hr_uS^2+3.7685*FuelM10Hr_uS-73.7974
    EndIf
    PortSet(5,0)
    '------------------------------------------------------------------------
    'CS205 Fuel Temperature Sensor measurement
    Therm107 (FuelTempC,1,28,Vx4,0,_60Hz,1.0,0)
    '``````````````````````````````````````````````````````````````````````````````
    ' Source of previous calculation of EMC and 1 hr fuel moisture below is unknown, so
    '   switched to calculations from Cohen and Deeming reference instead. 
    '   The differences in 1 hr fuel moisture were found to be small.
    ' December 2021 - Ken Waight
    '````` Calculate 1Hour Fuel Moisture, "FuelM1Hr_prct" ```````````````````````````
     FuelTempF = 0.0 'Retain old variable to preserve order in output tables.
     rhfuel = 0.0    'Retain old variable to preserve order in output tables.
    'FuelTempF=(1.8*FuelTempC)+32
    'rhfuel=(1.0 - 0.25 * SWDN_Wm2 / 1353.0) * RotronRH_percent
    'If rhfuel <= 10 Then
      'EMC=0.0323+0.281*rhfuel-0.000578*rhfuel*FuelTempF
    'EndIf
    'If rhfuel > 10 AND rhfuel <= 50 Then
      'EMC=2.227+0.160*rhfuel-0.01418*FuelTempF
    'EndIf
    'If rhfuel > 50 Then
      'EMC=21.06+0.005565*rhfuel*rhfuel-0.00035*FuelTempF*rhfuel-0.483*rhfuel
    'EndIf
    'FuelM1Hr_prct=(4.12*EMC+FuelM10Hr_prct)/5.0
    '``````````````````````````````````````````````````````````````````````````````
    '----------------------------------------------------------

    CallTable Precip

    ' New calculation of EMC and 1 hr fuel moisture.
    ' Cohen, J.D. and J.E. Deeming, 1982?: The National Fire Danger Rating System: basic equations. 
    '   General Technical Report PSW-82, U.S. Forest Service, Pacific Southwest Forest and Range
    '   Experimental Station.
    ' December 2021 - Ken Waight
    AirTemp1_DegF = (1.8*AirTemp1_DegC)+32
    If RotronRH_percent < 10 Then
      EMC = 0.03229 + 0.281073*RotronRH_percent - 0.000578*AirTemp1_DegF*RotronRH_percent
    ElseIf RotronRH_percent>=10 AND RotronRH_percent < 50 Then
      EMC = 2.22749 + 0.160107*RotronRH_percent - 0.014784*AirTemp1_DegF
    ElseIf RotronRH_percent>= 50 Then
      EMC = 21.0606 + 0.005565*RotronRH_percent*RotronRH_percent - 0.00035*RotronRH_percent*AirTemp1_DegF - 0.483199*RotronRH_percent
    EndIf
    FuelM1Hr_prct = (4.12*EMC+FuelM10Hr_prct)/5.0

    CallTable EMC_Vals

    ' ---------------Calc 100 hr & 1000 Hr Fuel M--------
    If TimeIntoInterval(1439,1440,min) Then
      '100 Hr Fuel Moisture
      FuelM100Hr_Yest = Dat24Hr.FuelM100Hr_prct(1,1)
      If FuelM100Hr_Yest = NAN Then FuelM100Hr_Yest = 15 '(5 + 5*CLIMAT) where CLIMAT is regional and = 2
      '1st time through set to 10% so calc doesn't = NAN
      PPTDUR = Daily_Precip_Time/60 'Get time of precip in hours
      EMCBar = (Daylit*EMC_Vals.EMCMin(1,1) + (24.0-Daylit)*EMC_Vals.EMCMax(1,1))/24.0
      BNDRYH = ((24.0-PPTDUR)*EMCBar + PPTDUR*(0.5*PPTDUR + 41.0))/24.0
      FuelM100Hr_prct = FuelM100Hr_Yest+(BNDRYH-FuelM100Hr_Yest)*(1.0-0.87*EXP(-0.24))

      '1000 Hr Fuel Moisture
      'Calculate average of BNDRYT over previous seven days.
      BDYBAR = (BNDRYT(1)+BNDRYT(2)+BNDRYT(3)+BNDRYT(4)+BNDRYT(5)+BNDRYT(6)+BNDRYT(7)) / 7.0
      'PM1000 is the fuel moisture from seven days ago.
      PM1000 = MC1000(1)
      'Calculate new value of 1000 hr fuel moisture.
      FuelM1000Hr_prct = PM1000 + (BDYBAR-PM1000)*(1.00-0.82*EXP(-.168))
      'Now shift the arrays of BNDRYT and MC1000 forward one day, dropping the values
      '  from 7 days ago.
      For i = 1 To 6
        BNDRYT(i) = BNDRYT(i+1)
        MC1000(i) = MC1000(i+1)
      Next i
      'Add new values of 24 hr boundary condition and fuel moisture to the end of arrays.
      BNDRYT(7) = ((24.0-PPTDUR)*EMCBar + PPTDUR*(2.7*PPTDUR + 76.0))/24.0
      MC1000(7) = FuelM1000Hr_prct 
    EndIf
    '--------------end fuel moisture caclulation------------

    ' Read Time every 1minute ---------------------------------
    If TimeIntoInterval (0,1,Min) Then
      RealTime (HWTime1_1min())
    EndIf
    '
    '--------------------------------------------------------------------
    'Call Output Tables --------------------------------------------------
    CallTable Dat1min
    ' Redirect DatTable "Dat1min" variables to program variables
    HWSpd1_1min = Dat1min.HWSpd1_ms_WVc(1,1)
    HWDir1_1min = Dat1min.HWSpd1_ms_WVc(2,1)
    '----------------------------------------------------------------------
    ' Determine the HWSpeed, HWDirection & Time of Max 1min sustained gust 1-level
    ' for a 24Hr period and store into program varialbes for a 24Hr period
    If HWSpd1_1min > HWSpd1_max1min Then
      HWSpd1_max1min = HWSpd1_1min
      HWDir1_max1min = HWDir1_1min
      HWTime1_max1min(4) = HWTime1_1min(4)
      HWTime1_max1min(5) = HWTime1_1min(5)
    EndIf
    '
    '--------------------------------------------------------------------
    'Call Output Table --------------------------------------------------
    CallTable DatNetWm15min
    ' Redirect DatTable "DatNetWm15min" variables to program variables
    SWDNWm2_15min=DatNetWm15min.SWDN_Wm2_avg(1,1)
    SWUPWm2_15min=DatNetWm15min.SWUP_Wm2_avg(1,1)
    LWDNWm2_15min=DatNetWm15min.LWDN_Wm2_avg(1,1)
    LWUPWm2_15min=DatNetWm15min.LWUP_Wm2_avg(1,1)
    'compute Net Radiation using redirected program variables
    NetRadWm2_15min=(SWDNWm2_15min + LWDNWm2_15min) - (SWUPWm2_15min + LWUPWm2_15min)

    '--------------------------------------------------------------------
    'Call Output Table --------------------------------------------------
    CallTable DatNetMJ24Hr
    ' Redirect DatTable "DatNetMJ24Hr" variables to program variables
    SWDNMJm2_24Hr=DatNetMJ24Hr.SWDN_MJm2_tot(1,1)
    SWUPMJm2_24Hr=DatNetMJ24Hr.SWUP_MJm2_tot(1,1)
    LWDNMJm2_24Hr=DatNetMJ24Hr.LWDN_MJm2_tot(1,1)
    LWUPMJm2_24Hr=DatNetMJ24Hr.LWUP_MJm2_tot(1,1)
    'compute Net Radiation using redirected program variables
    NetRadMJm2_24Hr=(SWDNMJm2_24Hr + LWDNMJm2_24Hr) - (SWUPMJm2_24Hr + LWUPMJm2_24Hr)
    '
    '---------------------------------
    'Call Data Tables and Store Data
    '---------------------------------
    CallTable(Dat15min)
    '=================================================
    'added 3/14/18 by Jason Ritter to get midnight values from 15 minute table
    'modified by David Bruggeman on 1/25/19 to change the midnight air temperature from RotronAirT_DegC to AirTemp1_AVGDegC
    'midnight temperature should be measured from level 0 temperature
    If IfTime(0,24,Hr) Then
      Midnt_air_temp_C=Dat15min.AirTemp1_AVGDegC
      Midnt_RH=Dat15min.RotronRH_AVGpercent
      Midnt_snow_in=Dat15min.SnowDepth_in_Avg
    EndIf
    '=================================================
    CallTable(Dat24Hr)
    '---------------------------------------------------------------------
    '=======================================================================
    CallTable(Dat1Hr)'For snowfall calculation
    '=======================================================================
    CallTable(Public15) 'Added 1/26/18 by JCR for 15 minute Public table variables
    If IfTime(0,15,min) Then
      'Calculate stability (sigma phi and sigma theta) at level 1 only in the Public table every 15 minutes
      'Calculate stdev of vertical and horizontal wind
      SigmaPhi = (Dat15min.VWSpd1_StdDev(1,1)/Dat15min.HWSpd1_AVGms(1,1))*57.2958
      SigmaTheta = Dat15min.HWDir1_StdDev(1,1)
      u = Dat15Min.HWSpd1_AVGms(1,1)
      Call Stability
      PrecipToday=PrecipToday + Public15.Rain_inch_TOT
      WindChill_15min=Public15.WindChill_C_AVG
      If Public15.HWSpd1_ms_MAX>MaxGustToday Then
        MaxGustToday=Public15.HWSpd1_ms_MAX
      EndIf
    EndIf
    '=======================================================================
    ' At the beginning of a new day reset 24Hr variables
    If TimeIntoInterval (0,1,Day) Then
      HWSpd1_max1min = 0
      HWDir1_max1min = 0
      HWTime1_max1min(4) = 0
      HWTime1_max1min(5) = 0

      HWSpd1Max24Hr=0
      HWDir1Max24Hr=0
      HW1Max24HrTime(4)=0  'hour
      HW1Max24HrTime(5)=0  'minute
      '
      HWSpd2Max24Hr=0
      HWDir2Max24Hr=0
      HW2Max24HrTime(4)=0  'hour
      HW2Max24HrTime(5)=0  'minute
      '
      HWSpd3Max24Hr=0
      HWDir3Max24Hr=0
      HW3Max24HrTime(4)=0  'hour
      HW3Max24HrTime(5)=0  'minute
      '
      HWSpd4Max24Hr=0
      HWDir4Max24Hr=0
      HW4Max24HrTime(4)=0  'hour
      HW4Max24HrTime(5)=0  'minute

      '=========================================================================
      PrecipToday=0
      MaxGustToday=0
      SnowToday_in = 0
      SunHourDuration = 0
      Daylit = 0''MH 10/18  added this so it gets zeroed out at the end of day
      'Reset precip variables at end of each day.
      Daily_Precip_Time = 0.0
      '=========================================================================
    EndIf
  NextScan
  SlowSequence
  Scan (30,Sec,3,0)
    '----- Measure SR50 ------------------------------------------------------
    'SR50 Sonic Ranging Sensor (*Configured for: Pulse Train Wiring)
    ' *(Pulse Train Output Address = 5, 100Hz 0.1 inch/pulse)
    '-------------------------------------------------------------------------
    '***************************************************************************
    ' If 13minutes into a 15minute interval Then trigger snow measurements
    '***************************************************************************
    PortSet (8,0) 'White wire must be grounded

    If TimeIntoInterval (13,15,Min)Then
      Snow15min=True
      SnowCount = 0
      SR50Accumulator = 0
    EndIf

    If Snow15min = true Then
      SnowCount=SnowCount+1
      SDI12Recorder (Snow(),7,0,"M5!",1.0,0,-1) 'Distance in ft, quality number, not used
      Dist2Target = (Snow(1))*SQR((AirTemp1_DegC+273.15)/273.15)
      SnowDepth_in = (Dist2Target-SR50_offset) * -1
      SR50Accumulator = SR50Accumulator + SnowDepth_in
    EndIf
    '---------------------------------------------------------------------
    'Reset Snow15min variables & compute 15min avg snow depth(of 3 readings spaced 30 seconds apart)
    If SnowCount >= 3 Then
      Snow15min=false
      SnowDepth_in_Avg=SR50Accumulator/SnowCount
      SnowCount = 0
    EndIf
    '---------------------------------------------------------------------
    '=========================================================================
    '---------------------------------------------------------------------
    ' Snowfall Estimation
    '---------------------------------------------------------------------
    If IfTime(0,15,Min) Then
      'Update running record of last eight 15 minute snow readings
      For i = 8 To 2 Step -1
        Snow_15min(i)=Snow_15min(i-1)
      Next i
      Snow_15min(1)=SnowDepth_in_Avg

      For i = 2 To 7 Step 1 'Calculate 1.5 hours of smoothed snow depth (in)
        SmoothSnow(i-1)=(Snow_15min(i-1)+Snow_15min(i)+Snow_15min(i+1))/3
      Next i
    EndIf
    'Find the difference in smoothed snow depth (inches)
    For i = 1 To 4
      SnowDiff(i) = SmoothSnow(i+1)-SmoothSnow(i)
    Next i
    'At 15 past the hour, calculate the snow depth for the last hour
    If IfTime(15,60,Min) Then
      SnowHr_in = 0
      For i = 1 To 4
        If SnowDiff(i)>0 Then
          SnowHr_in = SnowHr_in + SnowDiff(i)
        EndIf
        SnowHr_in=Round (SnowHr_in,1)'Round hourly snowfall to the nearest 0.1 inch
      Next i
      'Test conditions to determine whether to use SnowHr_in
      LastHrPrecip = Dat1Hr.HrRain_inch
      'Average the four air temp readings from last hour (ignore the latest as it is in this hour)
      AirT_HrAvg = Dat1Hr.HrAirT_C
      '1) if the total of the increases over an hour was > 0.4" and precip was measured during the hour
      If SnowHr_in>0.4 Then
        If  LastHrPrecip > 0 Then
          SnowHr_in = SnowHr_in 'snowfall occurred, so use the hourly total
        EndIf
      Else
        SnowHr_in = 0'snowfall did not occur, so set hourly total to zero
      EndIf
      '2) 0.1 < SnowHr_in <=0.4 AND Precip occurred AND hourly avg air temp < 40 deg F
      If SnowHr_in > 0.1 Then
        If SnowHr_in<=0.4 Then
          If  LastHrPrecip > 0 Then
            If AirT_HrAvg < (40-32)/1.8 Then 'Check for air temp below 40 F
              SnowHr_in = SnowHr_in 'snowfall occurred, so use the hourly total
            EndIf
          EndIf
        Else
          SnowHr_in = 0'snowfall did not occur, so set hourly total to zero
        EndIf
      EndIf
      '3) if the SnowHr_in < 0.1", precip was measured during the hour and the average temperature was <= 32F, it is recorded as a trace
      If SnowHr_in < 0.1 Then
        If  LastHrPrecip > 0 Then
          If AirT_HrAvg < 0 Then 'Check for air temp below 32 F (0 C)
            SnowTrace = "T" 'Trace snowfall occurred
          EndIf
        Else
          SnowTrace = ""'Trace snowfall did not occur, so set trace to nil
        EndIf
      EndIf

      SnowToday_in = SnowToday_in + SnowHr_in
    EndIf
    '=========================================================================
  NextScan

EndProg
