'
'CR3000 TA53
'TA53-CR3000-TA53_V9.CR3
'####################################################################
'########## Program Comments ######################################
'###################################################################
' 
'
'
'
'
'
'Date: 28 Feb. 2023
'Updated Program for new 8-48 Eppley Sensor & Multiplier.
'New Eppley 8-48 SN-27758, multiplier 8.69.
'Previous 8-48 multiplier was 9.42.
'Removed outdated Program Comments & left over commands from 
'program conversion of TA6 to TA53.
'
'
'
'
'Date: 04 April 2022
'New Program Version: TA53_V8_1. GTStanton
'Updated Multiplier & Offset for new model 061 temps sensors
' Multiplier -147.0588
' Offset 95.7353
'
'Date: 17 March 2021
'New Program Version: TA53_8.
'Changed Out Eppley Sensor SN-29208 with SN-14715.
'SN-29208 multiplier was 9.42, SN-14715 multiplier is 8.18.
'Previous Program was TA53_V7-1.CR3
'
'
'Date: 8 July 2020
'New Program TA53_V7-1.CR3
'Changed Out the Eppley Sensor and adjusted multiplers
'Previous SWDN: 8.13       New SWDN:  9.42
'Old Program TA53_V7.CR3
'
'
'
'Date: Jan 26, 2018
' New Program: TA53_V6.CR3
' Old Program: TA53_V5.CR3
'
'
'=====================================================================
'Version:6   26 January 2018 Jason Ritter (JCR), Campbell Scientific
'Updated program to version 6, adding the following Public variables
'PrecipToday - Precipitation since midnight, updated every 15 minutes
'MaxGustToday - Maximum wind gust since midnight (speed at level 1 only), updated every 15 minutes
'WindChill_C - Wind chill at level 1 only, deg C, updated every 15 minutes, calculated with:
'              WindChill = 35.74 + (0.6215*temp0) - (35.75*speed1^0.16) + (0.4275*temp0*speed1^0.16)
'              with speed1 in mph and temp0 in deg F
'              Then WindChill_C = (WindChill -32)/1.8
'SigmaPhi &
'SigmaTheta-stability at level 1 only, 
'nighttime shortwave down measurement <6 W/m2
'
'
'====================================================================
'Version: 5  October 18, 2016 - GTStanton, LANL Met Tech
'Installed new Eppley Sensor update multiplier from 
'previous 9.93 to new 8.13.
'
'
'Version: 4 August 17, 2015 - Jacob Davis, CSI
'    Wholesale renaming of solar radiation variables.
'     As they were called      	New Label       	Indicates
'         EppPSP1	            SWDN	       Short Wave Down/Incoming

' Updated the Vertical Wind Measurement Multiplier to 
' Account for the Cosine Measurement Effect Factor 1.25. (0.0225).
' Corrected the W/m2 multiplier for solar sensor meassurement 
' from 1E5 to 1E6 & also updated sensor multiplier to current value.
'
'
' Date: July 30, 2014
' New Program: TA53_V1Dev.CR3
' Old Program: TA6_Combined-SCW.CR3
' Comments:
' To Do: !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
' Go To "Declare Variable" Section and enter values for;
'  Const PScan=?  
'* Enter value for program execution interval in seconds
'  Const PSP1Cal=?.??  
'* Enter PSP1Cal = Eppley SensitivityCal Constant in microVolt/WM^2

'!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!

'^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^
'*Install Note: Setup & test communication and sensor measurements in
' lab/office prior to field deployment!
'^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^^
'---------------------------------
' Date: July 11, 2014
' Program: TA6_Combined-SCW.CR3
' Comments: Started-Created by Short Cut (3.0)
'---------------------------------------------
'********************************************************************
'
'####################################################################
'##### -Wiring for CR3000- ##########################################
'####################################################################
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (1)
'    1H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P1:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (2)
'    1L:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P2:  HWspd Signal Red
'
'  RMYoung 05305-AQ Wind Speed & Direction Sensor (3)
'    2H:  HWDir Signal Yellow
'    Ground:  WSpd reference Green
'    Ground:  Cable Shield White
'    Ground:  WDir reference Black
'    VX1:  HWDir Excite Blue
'    P3:  HWspd Signal Red
'
'  RMYoung 27106T Wind Speed Sensor (L1)
'    3H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (L2)
'    3L:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  RMYoung 27106T Wind Speed Sensor (L3)
'    4H:  VWspd Signal Red
'    Ground:  WSpd reference Black
'    Ground:  Cable Shield Clear?
'
'  MetOne 061 Air Temp Sensor(1)(L0)
'    5H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 5H
'
'  MetOne 061 Air Temp Sensor(2)(L1)
'    5L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 5L
'
'  MetOne 061 Air Temp Sensor(3)(L2)
'    6H:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 6H
'
'  MetOne 061 Air Temp Sensor(4)(L3)
'    6L:  Air Temp Signal White
'    Ground:  Air Temp reference Black
'    Ground:  Cable shield
'    VX2:  Excite *Wire a 23.1Kohm resistor between VX2 & 6L
'
'  Rotronics MP101A Air Temp & RH Sensor (constant power)
'    Located in L0 Station.
'    7L:  Air Temperature Siganl Red(Brown)
'    8H:  RH Signal White
'    Ground:  Signal Ground Yellow
'    Ground:  Power Ground Green
'    Ground:  Cable Shield Clear?
'    12V:  Power Blue
'
' Eppley PSP1 Precision Spectral Pyranometer (1)
'    9H:  Signal+ Green
'    9L:  Signal- Blue
' *Note: Jumper wire 9L -to- ground
'    Ground:  Cable shield Clear?
'
'  All Weather Rain Gauge wired to a control port
'    Ground:  Cable Shield Clear?
'    P4:  Signal+ Red
'     G:  Signal- Black
'********************************************************************
'
'####################################################################
'##### Declare Variables ############################################
'###################################################################
Const PScan=3  'enter program execution interval in seconds
Const PSP1Cal=8.69  ' Enter PSP1Cal = Eppley Sensitivity Cal Constant in microVolt/WM^2
SequentialMode
Dim AirTC
Public BattV, PTemp_C
Public HWSpd1_ms, HWDir1_deg, HWSpd2_ms,HWDir2_deg,HWSpd3_ms,HWDir3_deg
Public VWSpd1_ms, VWSpd2_ms, VWSpd3_ms
Public AirTemp1_DegC, AirTemp2_DegC, AirTemp3_DegC, AirTemp4_DegC
Public RotronAirT_DegC, RotronRH_percent
Public Rain_inch
Public SWDN_measure, SWDN_Wm2, SWDN_MJm2
Public DewPt_DegC
'
Public HWSpd1Max24Hr, HWDir1Max24Hr,HW1Max24HrTime(9)
Public HWSpd2Max24Hr, HWDir2Max24Hr,HW2Max24HrTime(9)
Public HWSpd3Max24Hr, HWDir3Max24Hr,HW3Max24HrTime(9)
Public HWSpd4Max24Hr, HWDir4Max24Hr,HW4Max24HrTime(9)
'
Public HWSpd1_1min, HWDir1_1min, HWTime1_1min(9)
Public HWSpd1_max1min, HWDir1_max1min, HWTime1_max1min(9)
'====================================================================
'Variables added 1/26/17 by J. Ritter for 15 minute Public table update.
Public PrecipToday, MaxGustToday,WindChill_15min
Dim WindChill_C,WindChill_F, temp0_F, speed1_mph 'for wind chill calc.
Dim u
Public SigmaPhi, SigmaTheta
Public V_PGCat As String
Public H_PGCat As String
Public Sun As Boolean
'=====================================================================
'
'*********************************************************************
'
'####################################################################
'##### Declare Units ################################################
'####################################################################
Units BattV=Volts
Units PTemp_C=Deg C
Units HWSpd1_ms=meters/second
Units HWDir1_deg=degrees
Units HWSpd2_ms=meters/second
Units HWDir2_deg=degrees
Units HWSpd3_ms=meters/second
Units HWDir3_deg=degrees
Units VWSpd1_ms=meters/second
Units VWSpd2_ms=meters/second
Units VWSpd3_ms=meters/second
Units AirTemp1_DegC=Deg C
Units AirTemp2_DegC=Deg C
Units AirTemp3_DegC=Deg C
Units AirTemp4_DegC=Deg C
Units RotronAirT_DegC=Deg C
Units RotronRH_percent=%
Units SWDN_measure=uV
Units SWDN_Wm2=W/m^2
Units SWDN_MJm2=MJ/m^2
Units DewPt_DegC=Deg C
Units Rain_inch=inch
'*********************************************************************
'====================================================================
'Units for variables added by JCR, 1/26/18
Units PrecipToday = inch
Units MaxGustToday = meters/second
Units WindChill_15min = Deg C
'=====================================================================
'
'#####################################################################
'##### Define Data Tables ############################################
'#####################################################################
'---------------------------------------------------------------------
'----- Data Table: "Dat1min" , Interval: 1minute ---------------------
'---------------------------------------------------------------------
' These table-readings used to compute speed,direction & time 
' of max sustained 1min gust using the WindVector instruction on 
' L1 RMY05305 (1) Anemometer.
'
DataTable(Dat1min,True,48)  '*Note: data table size fixed to 48 records
  DataInterval(0,1,Min,10)
  WindVector (1,HWSpd1_ms,HWDir1_deg,FP2,False,0,0,0)  
  'Wind Vector L1 RMY05305 (1) Anemometer
  'FieldNames("HWSpd1_AVGms,HWDir1_AVGdeg,HWDir1_StdDev")
  Sample (2,HWTime1_1min(4),FP2)  'RMY05305 (1) time HH,MM
EndTable

'--------------------------------------------------------------------
'----- Data Table: "Dat15min" , Interval: 15minutes -----------------
'--------------------------------------------------------------------
DataTable(Dat15min,True,-1)
  DataInterval(0,15,Min,10)
  '-----  EPA Wind Vector: Instruction "WindVector" -----------
  'mean horizontal speed, Field Name: "HWSpd1_AVGms",
  'unit vector mean direction, Field Name: "HWDir1_AVGdeg",
  '& standard deviation of direction, Field Name: "HWDir1_StdDev".
  '-------------------------------------------------------------
  WindVector (1,HWSpd1_ms,HWDir1_deg,FP2,False,0,0,0)'L1 Anemometer
  FieldNames("HWSpd1_AVGms,HWDir1_AVGdeg,HWDir1_StdDev")
  StdDev(1,HWSpd1_ms,FP2,False)  'StdDev RMY05305 (1) Wind Speed
  FieldNames("HWSpd1_StdDev")
  '-----  EPA Wind Vector: Instruction "WindVector" -----
  WindVector (1,HWSpd2_ms,HWDir2_deg,FP2,False,0,0,0) 'L2 Anemometer
  FieldNames("HWSpd2_AVGms,HWDir2_AVGdeg,HWDir2_StdDev")
  StdDev(1,HWSpd2_ms,FP2,False)  'StdDev RMY05305 (2) Wind Speed
  FieldNames("HWSpd2_StdDev")
  '-----  EPA Wind Vector: Instruction "WindVector" -----
  WindVector (1,HWSpd3_ms,HWDir3_deg,FP2,False,0,0,0) 'L3 Anemometer
  FieldNames("HWSpd3_AVGms,HWDir3_AVGdeg,HWDir3_StdDev")
  StdDev(1,HWSpd3_ms,FP2,False)  'StdDev RMY05305 (3) Wind Speed
  FieldNames("HWSpd3_StdDev")
  '-------------------------------------------------------------
  Average(1,VWSpd1_ms,FP2,False)  'Avg RMY27106T (1) Wind Speed
  FieldNames("VWSpd1_AVGms")
  StdDev(1,VWSpd1_ms,FP2,False)  'StdDev RMY27106T (1) Wind Speed
  FieldNames("VWSpd1_StdDev")
  Average(1,VWSpd2_ms,FP2,False)  'Avg RMY27106T (2) Wind Speed
  FieldNames("VWSpd2_AVGms")
  StdDev(1,VWSpd2_ms,FP2,False)  'StdDev RMY27106T (2) Wind Speed
  FieldNames("VWSpd2_StdDev")
  Average(1,VWSpd3_ms,FP2,False)  'Avg RMY27106T (3) Wind Speed
  FieldNames("VWSpd3_AVGms")
  StdDev(1,VWSpd3_ms,FP2,False)  'StdDev RMY27106T (3) Wind Speed
  FieldNames("VWSpd3_StdDev")
  '-------------------------------------------------------------
  Average(1,AirTemp1_DegC,FP2,False)  'Avg MetOne060A2 (1) Air Temp
  FieldNames("AirTemp1_AVGDegC")
  Average(1,AirTemp2_DegC,FP2,False)  'Avg MetOne060A2 (2) Air Temp
  FieldNames("AirTemp2_AVGDegC")
  Average(1,AirTemp3_DegC,FP2,False)  'Avg MetOne060A2 (3) Air Temp
  FieldNames("AirTemp3_AVGDegC")
  Average(1,AirTemp4_DegC,FP2,False)  'Avg MetOne060A2 (4) Air Temp
  FieldNames("AirTemp4_AVGDegC")
  '-------------------------------------------------------------
  Average(1,RotronAirT_DegC,FP2,False)  'Avg Rotron MP101A Air Temp
  FieldNames("RotronAirT_DegC")
  Average(1,RotronRH_percent,FP2,False)  'Avg MP101A Rel. Humidity
  FieldNames("RotronRH_AVGpercent")
  '-------------------------------------------------------------
  Average(1,DewPt_DegC,FP2,False)  'Avg Dew Point
  FieldNames("DewPt_AVGDegC")
  '-------------------------------------------------------------
  Totalize(1,Rain_inch,FP2,False)  'Total AW60103 rain
  FieldNames("Rain_TOTinch")
  '-------------------------------------------------------------
  Average(1,SWDN_Wm2,IEEE4,False)  'Avg PSP1 solar radiation
  FieldNames("SWDN_AVGWm2")
  '  Totalize(1,SWDN_MJm2,IEEE4,False)  'Total PSP1 flux density
  '  FieldNames("SWDN_TOTMJm2")
  '-------------------------------------------------------------
  Minimum(1,BattV,FP2,False,False)  'Min Battery Voltage
  FieldNames("BattV_MINVolt")
  Average(1,PTemp_C,FP2,False)  'Avg datalogger panel temperature
  FieldNames("PTemp_AVGDegC")
  '-------------------------------------------------------------
EndTable
'*******************************************************************
'
'---------------------------------------------------------------------
'----- Data Table: "Dat24Hr" , Interval: 24Hr ------------------------
'---------------------------------------------------------------------
DataTable(Dat24Hr,True,-1)
  DataInterval(0,1440,Min,10)
  '--------------------------------------------------------------------
  Average(1,HWSpd1_ms,FP2,False)  ' Avg RMY05305 (1) Wind Speed
  Average(1,HWSpd2_ms,FP2,False)  ' Avg RMY05305 (2) Wind Speed
  Average(1,HWSpd3_ms,FP2,False)  ' Avg RMY05305 (3) Wind Speed
  '--------------------------------------------------------------------
  Sample (1,HWSpd1Max24Hr,FP2)  ' Max 24Hr RMY05305 (1) Wind Speed
  Sample (1,HWSpd2Max24Hr,FP2)  ' Max 24Hr RMY05305 (2) Wind Speed
  Sample (1,HWSpd3Max24Hr,FP2)  ' Max 24Hr RMY05305 (3) Wind Speed
  '--------------------------------------------------------------------
  Sample (1,HWDir1Max24Hr,FP2)  ' Max 24Hr RMY05305 (1) Direction
  Sample (1,HWDir2Max24Hr,FP2)  ' Max 24Hr RMY05305 (2) Direction
  Sample (1,HWDir3Max24Hr,FP2)  ' Max 24Hr RMY05305 (3) Direction
  '--------------------------------------------------------------------
  Sample (2,HW1Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (1) time HH,MM
  Sample (2,HW2Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (2) time HH,MM
  Sample (2,HW3Max24HrTime(4),FP2)  ' Max 24Hr RMY05305 (3) time HH,MM
  '----------------------------------------------------------------------
  Sample (1,HWSpd1_max1min,FP2)  'Max 1min sustained RMY05305 (1) Wind Speed
  Sample (1,HWDir1_max1min,FP2)  'Max 1min sustained RMY05305 (1) Wind Direction
  Sample (2,HWTime1_max1min(4),FP2)  'Max 1min sustained RMY05305 (1) time HH,MM
  '----------------------------------------------------------------------
  Maximum(1,AirTemp1_DegC,FP2,False,True)  'Max MetOne060A2 (1) Air Temp & time HH,MM
  FieldNames("AirTemp1_DegC_MAX,AirTemp1_DegC_TMax")
  Minimum(1,AirTemp1_DegC,FP2,False,True)  'Min MetOne060A2 (1) Air Temp & time HH,MM
  FieldNames("AirTemp1_DegC_MIN,AirTemp1_DegC_TMin")
  '----------------------------------------------------------------------
  Maximum(1,RotronAirT_DegC,FP2,False,False)  'Max Rotron MP101A AirTemp
  Minimum(1,RotronAirT_DegC,FP2,False,False)  'Min Rotron MP101A AirTemp
  Average(1,RotronAirT_DegC,FP2,False)  'Avg Rotron MP101A AirTemp
  '----------------------------------------------------------------------
  'Max, Min, and Avg 24 hr outputs added by JB on 5/6/15 per Jean Dewart discussion
  Maximum(1,RotronRH_percent,FP2,False,False)  'Max Rotron MP101A RH
  Minimum(1,RotronRH_percent,FP2,False,False)  'Min Rotron MP101A RH
  Average(1,RotronRH_percent,FP2,False)  'Avg Rotron MP101A RH
  '-------------------------------------------------------------------
  Maximum(1,DewPt_DegC,FP2,False,False)  'Max DewPoint
  Minimum(1,DewPt_DegC,FP2,False,False)  'Min DewPoint
  Average(1,DewPt_DegC,FP2,False)  'Avg Dew Point
  '-------------------------------------------------------------
  Totalize(1,Rain_inch,FP2,False)  'Total AW60103 rain
  FieldNames("Rain_TOTinch")
  '-------------------------------------------------------------
  '  Average(1,SWDN_Wm2,IEEE4,False)  'Avg PSP1 solar radiation
  '  FieldNames("SWDN_AVGWm2")
  Totalize(1,SWDN_MJm2,IEEE4,False)  'Total PSP1 flux density
  FieldNames("SWDN_TOTMJm2")
  '-------------------------------------------------------------------
  Minimum(1,BattV,FP2,False,False)  ' Min Battery Voltage
  FieldNames("BattV_MINVolt")
  Minimum(1,PTemp_C,FP2,False,False)  ' Min datalogger Pnl Temperature
  FieldNames("PTemp_MINDegC")
  Maximum(1,PTemp_C,FP2,False,False)  ' Max datalogger Pnl Temperature
  FieldNames("PTemp_MAXDegC")
  '--------------------------------------------------------------------
EndTable
'********************************************************************
'15 minute table storing values being sent to Public Table every 15 min.
'======================================================================
'Added by JCR 1/26/18
DataTable (Public15,True,1)
  DataInterval (0,15,Min,10)
  Totalize (1,Rain_inch,FP2,False)
  Maximum (1,HWSpd1_ms,FP2,HWSpd1_ms=NAN,False)
  Average (1,WindChill_C,FP2,False)
EndTable
'=====================================================================
'====================================================================
Sub Stability
  'Find Vertical Pasquill-Gifford Stability Category
  Select Case SigmaPhi
  Case < 2.890
    V_PGCat = "F"
  Case < 6.022
    V_PGCat = "E"
  Case <9.394
    V_PGCat = "D"
  Case < 12.043
    V_PGCat = "C"
  Case < 13.85
    V_PGCat = "B"
  Case >=13.85
    V_PGCat = "A"
  End Select
  If Sun = True Then
    If V_PGCat = "A" Then
      Select Case u
      Case < 3
        V_PGCat = "A"
      Case < 4
        V_PGCat = "B"
      Case < 6
        V_PGCat = "C"
      Case >=6
        V_PGCat = "D"
      EndSelect
    ElseIf V_PGCat = "B" Then
      Select Case u
      Case < 4
        V_PGCat = "B"
      Case < 6
        V_PGCat = "C"
      Case >=6
        V_PGCat = "D"
      EndSelect
    ElseIf V_PGCat = "C" Then
      If u >= 6 Then V_PGCat = "D"
    ElseIf V_PGCat = "D" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "E" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "F" Then
      V_PGCat = "D"
    EndIf
  Else
    If V_PGCat = "A" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "B" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "C" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "D" Then
      V_PGCat = "D"
    ElseIf V_PGCat = "E" Then
      If u >= 5 Then V_PGCat = "D"
    ElseIf V_PGCat = "F" Then
      Select Case u
      Case < 3
        V_PGCat = "F"
      Case < 5
        V_PGCat = "E"
      Case >=5
        V_PGCat = "D"
      EndSelect
    EndIf
  EndIf
  'Find Lateral Pasquill-Gifford Stability Category
  Select Case SigmaTheta
  Case < 4.576
    H_PGCat = "F"
  Case < 9.032
    H_PGCat = "E"
  Case <15.054
    H_PGCat = "D"
  Case < 21.075
    H_PGCat = "C"
  Case < 27.097
    H_PGCat = "B"
  Case >=27.097
    H_PGCat = "A"
  End Select
  If Sun = True Then
    If H_PGCat = "A" Then
      Select Case u
      Case < 3
        H_PGCat = "A"
      Case < 4
        H_PGCat = "B"
      Case < 6
        H_PGCat = "C"
      Case >=6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "B" Then
      Select Case u
      Case < 4
        H_PGCat = "B"
      Case < 6
        H_PGCat = "C"
      Case >=6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "C" Then
      If u >= 6 Then H_PGCat = "D"
    ElseIf H_PGCat = "D" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "E" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "F" Then
      H_PGCat = "D"
    EndIf
  Else
    If H_PGCat = "A" Then
      Select Case u
      Case < 2.9
        H_PGCat = "F"
      Case < 3.6
        H_PGCat = "E"
      Case >= 3.6
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "B" Then
      Select Case u
      Case < 2.4
        H_PGCat = "F"
      Case < 3
        H_PGCat = "E"
      Case >= 3
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "C" Then
      Select Case u
      Case < 2.4
        H_PGCat = "E"
      Case >= 2.4
        H_PGCat = "D"
      EndSelect
    ElseIf H_PGCat = "D" Then
      H_PGCat = "D"
    ElseIf H_PGCat = "E" Then
      If u >= 5 Then H_PGCat = "D"
    ElseIf H_PGCat = "F" Then
      Select Case u
      Case < 3
        H_PGCat = "F"
      Case < 5
        H_PGCat = "E"
      Case >=5
        H_PGCat = "D"
      EndSelect
    EndIf
  EndIf
EndSub
' 
'End of subroutine To calculate P-G Stability Category
'=====================================================================
'
'
'#####################################################################
'##### Main Program #################################################
'####################################################################
'Main Scan ----------------------------------------------------------
BeginProg
  Scan(3,Sec,1,0)
    '-----------------------------------------------------------------
    ' Datalogger Battery Voltage measurement 'BattV'
    Battery(BattV)
    ' Datalogger Wiring Panel Temperature measurement 'PTemp_C'
    PanelTemp(PTemp_C,_60Hz)
    '-----------------------------------------------------------------
    'All Weather Rain Gauge wired to a control port, measurement 'Rain_inch'
    PulseCount(Rain_inch,1,4,2,0,0.01,0)
    '------------------------------------------------------------------
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (1)
    '  Wind Speed & Direction Sensor measurements 'HWSpd1_ms' and 'HWDir1_deg'
    PulseCount(HWSpd1_ms,1,1,1,1,0.1024,0)
    BrHalf(HWDir1_deg,1,mV5000,1,1,1,5000,True,0,_60Hz,355,0)
    If HWDir1_deg>=360 OR HWDir1_deg<0 Then HWDir1_deg=0
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (2)
    '  Wind Speed & Direction Sensor measurements 'HWSpd2_ms' and 'HWDir2_deg'
    PulseCount(HWSpd2_ms,1,2,1,1,0.1024,0)
    BrHalf(HWDir2_deg,1,mV5000,2,1,1,5000,True,0,_60Hz,355,0)
    If HWDir2_deg>=360 OR HWDir2_deg<0 Then HWDir2_deg=0
    '  RMYoung 05305-AQ Wind Speed & Direction Sensor (3)
    '  Wind Speed & Direction Sensor measurements 'HWSpd3_ms' and 'HWDir3_deg'
    PulseCount(HWSpd3_ms,1,3,1,1,0.1024,0)
    BrHalf(HWDir3_deg,1,mV5000,3,1,1,5000,True,0,_60Hz,355,0)
    If HWDir3_deg>=360 OR HWDir3_deg<0 Then HWDir3_deg=0
    '------------------------------------------------------------------
    ' Determine the HWSpeed, Direction & Time of Max Gust 4-levels
    ' for a 24Hr period
    If HWSpd1_ms > HWSpd1Max24Hr Then
      HWSpd1Max24Hr = HWSpd1_ms
      HWDir1Max24Hr = HWDir1_deg
      RealTime (HW1Max24HrTime())
    EndIf
    '
    If HWSpd2_ms > HWSpd2Max24Hr Then
      HWSpd2Max24Hr = HWSpd2_ms
      HWDir2Max24Hr = HWDir2_deg
      RealTime (HW2Max24HrTime())
    EndIf
    '
    If HWSpd3_ms > HWSpd3Max24Hr Then
      HWSpd3Max24Hr = HWSpd3_ms
      HWDir3Max24Hr = HWDir3_deg
      RealTime (HW3Max24HrTime())
    EndIf
    '=================================================================
    'Night should be considered <6 W/m2 from shortwave down measurement
    If Dat15min.SWDN_AVGWm2 < 6 Then 
      Sun = False
    Else
      Sun = True
    EndIf
    '==================================================================
    '
    '
    '-----------------------------------------------------------------
    '  RMYoung 27106T Wind Speed Sensor (1)
    '  Wind Speed Sensor measurements 'VWSpd1_ms''JB changed 5/6/15 1.25*0.018 = 0.0225
    VoltSe(VWSpd1_ms,1,mV5000,5,True,0,_60Hz,0.0225,0)
    '  RMYoung 27106T Wind Speed Sensor (2)
    '  Wind Speed Sensor measurements 'VWSpd2_ms''JB changed 5/6/15 1.25*0.018 = 0.0225
    VoltSe(VWSpd2_ms,1,mV5000,6,True,0,_60Hz,0.0225,0)
    '  RMYoung 27106T Wind Speed Sensor (3)
    '  Wind Speed Sensor measurements 'VWSpd3_ms''JB changed 5/6/15 1.25*0.018 = 0.0225
    VoltSe(VWSpd3_ms,1,mV5000,7,True,0,_60Hz,0.0225,0)
    '---------------------------------------------------------------------
    '  MetOne 061 Air Temp Sensor(1) L0
    '  measurements 'AirTemp1_DegC'    '  MetOne 060A2 Air Temp Sensor(1)
    BrHalf(AirTemp1_DegC,1,mV1000,9,2,1,1000,True,0,_60Hz,-147.0588,95.7353)
    '=======================================================================
    temp0_F = 1.8*AirTemp1_DegC + 32 'Convert air temp to deg F for wind chill calc.
    speed1_mph = 2.23694*HWSpd1_ms 'Convert L-1 wind speed to mph for wind chill calc.
    WindChill_F = 35.74 + (0.6215*temp0_F) - (35.75*speed1_mph^0.16) + (0.4275*temp0_F*speed1_mph^0.16)
    WindChill_C = (WindChill_F -32)/1.8 'Convert wind chill to deg C
    '=======================================================================
    '  MetOne 061 Air Temp Sensor(2) L1
    '  measurements 'AirTemp2_DegC'
    BrHalf(AirTemp2_DegC,1,mV1000,10,2,1,1000,True,0,_60Hz,-147.0588,95.7353)
    '  MetOne 061 Air Temp Sensor(3) L2
    '  measurements 'AirTemp3_DegC'
    BrHalf(AirTemp3_DegC,1,mV1000,11,2,1,1000,True,0,_60Hz,-147.0588,95.7353)
    '  MetOne 061 Air Temp Sensor(4) L3
    '  measurements 'AirTemp4_DegC'
    BrHalf(AirTemp4_DegC,1,mV1000,12,2,1,1000,True,0,_60Hz,-147.0588,95.7353)
    '---------------------------------------------------------------------
    '  Rotronics MP101A Air Temp & RH Sensor (constant power)
    '  measurements 'RotronAirT_DegC' and 'RotronRH_percent'
    VoltSe(RotronAirT_DegC,1,mV1000,14,0,0,_60Hz,0.1,-40)
    VoltSe(RotronRH_percent,1,mV1000,15,0,0,_60Hz,0.1,0)
    '    If RotronRH_percent>100 AND RotronRH_percent<103 Then RotronRH_percent=100
    '-------------------------------------------------------------------------
    ' To Do: !!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    ' Go To "Declare Variable" Section and enter values for;
    '  Const PSP1Cal=?.??  '* Enter PSP1Cal = Eppley SensitivityCal Constant in microVolt/WM^2
    '  Const PSP2Cal=?.??  '* Enter PSP2Cal = Eppley SensitivityCal Constant in microVolt/WM^2
    '!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!
    ' Eppley PSP1 Precision Spectral Pyranometer (1)
    ' measurements 'SWDN_MJm2' and 'SWDN_Wm2'
    VoltDiff(SWDN_measure,1,mV20,9,True,0,_60Hz,1000,0)
    SWDN_Wm2=SWDN_measure/PSP1Cal  'ans in W/m2
    SWDN_MJm2=(SWDN_Wm2/1000000)*PScan  'ans in MJ/m2      
    'If SWDN_Wm2<0 Then SWDN_Wm2=0 **JB changed 5/6/15 - 100,000to1,000,000 per J. Dewart
    '-------------------------------------------------------------------------
    '
    '***********************************************************************************
    ' Dew Point calculation 'DewPt_DegC' ***********************************************
    ' Air temperature and relative humidity (%) measurements are required for this calculation.
    ' Therefore, air temperature and relative humidity (%) sensors must be selected and
    ' configured before selecting and configuring this calculation.
    '
    'The equation used to calculate dew point is:
    ' Td=(241.88*ln(P/0.61078))/(17.558-ln(P/0.61078))
    ' where
    ' Td = dew point (Deg C)
    ' and P = vapor pressure (kPa)
    '
    'The equation Is an inverse of a version of Teten's equation (Tetens, O. 1930. Z. Geophys.,
    ' 6:297), optimized for dew points in the range -35 to 50 Deg C, and is accurate to within
    ' plus or minus 0.1 Deg C within that range.
    '
    ' Vapor pressure is calculated by the datalogger with the following equation:
    ' P=RH*Psw/100
    ' where
    ' RH = relative humidity (%)
    ' Psw = saturation vapor pressure (kPa) over water

    ' Saturation vapor pressure over water is calculated by the datalogger with the following
    ' approximating polynomial (see Lowe, P.R. 1977. J. Appl. Meteor., 16:100-103):
    ' Psw=6.107799961+T*(4.436518521*10^-1+T*(1.428945805*10^-2+T*(2.650648471*10^-4+T*(3.031240396*10^-6+T*(2.034080948*10^-8+6.136820929*10^-11*T)))))
    ' where
    ' T = air temperature (dry-bulb temperature) (Deg C)
    ' Some datalogger models have built in instructions for calculating P and Psw using the
    ' above equations (e.g. CRBasic DewPoint instruction and Edlog P56 instruction), others
    ' do not and will include the complete equations in the resulting datalogger program.

    ' Campbell Scientific has a "Calculating Dew Point from RH and Air Temperature"
    ' Application Note at
    ' ftp://ftp.campbellsci.com/pub/csl/outgoing/uk/technotes/16_oct05.pdf
    '
    '*********************************************************************
    '
    AirTC=AirTemp1_DegC
    DewPoint(DewPt_DegC,AirTC,RotronRH_percent)
    If DewPt_DegC>AirTC OR DewPt_DegC=NAN Then DewPt_DegC=AirTC
    '----------------------------------------------------------
    '----------------------------------------------------------
    ' Read Time every 1minute ---------------------------------
    If TimeIntoInterval (0,1,Min) Then
      RealTime (HWTime1_1min())
    EndIf
    '
    '----------------------------------------------------------------
    'Call Output Tables ----------------------------------------------
    CallTable Dat1min
    '-----------------------------------------------------------------
    ' Redirect DatTable "Dat1min" variables to program variables ------
    HWSpd1_1min = Dat1min.HWSpd1_ms_WVc(1,1)
    HWDir1_1min = Dat1min.HWSpd1_ms_WVc(2,1)
    '----------------------------------------------------------------------
    ' Determine the HWSpeed, HWDirection & Time of Max 1min sustained gust 1-level
    ' for a 24Hr period and store into program varialbes for a 24Hr period
    If HWSpd1_1min > HWSpd1_max1min Then
      HWSpd1_max1min = HWSpd1_1min
      HWDir1_max1min = HWDir1_1min
      HWTime1_max1min(4) = HWTime1_1min(4)
      HWTime1_max1min(5) = HWTime1_1min(5)
    EndIf
    '---------------------------------
    'Call Data Tables and Store Data
    '---------------------------------
    CallTable(Dat15min)
    CallTable(Dat24Hr)
    '=================================================================
    CallTable(Public15) 'Added 1/26/18 by JCR for 15 minute Public table variables
    If IfTime(0,15,min) Then
      'Calculate stability (sigma phi and sigma theta) at level 1 only 
      'for input to the Public table every 15 minutes
      'Calculate stdev of vertical and horizontal wind
      SigmaPhi = (Dat15min.VWSpd1_StdDev(1,1)/Dat15min.HWSpd1_AVGms(1,1))*57.2958
      SigmaTheta = Dat15min.HWDir1_StdDev(1,1)
      u = Dat15Min.HWSpd1_AVGms(1,1)
      Call Stability

      PrecipToday=PrecipToday + Public15.Rain_inch_TOT
      WindChill_15min=Public15.WindChill_C_AVG
      If Public15.HWSpd1_ms_MAX>MaxGustToday Then
        MaxGustToday=Public15.HWSpd1_ms_MAX
      EndIf
    EndIf
    '=================================================================
    '-----------------------------------------------------------------
    ' At the beginning of a new day reset 24Hr variables
    If TimeIntoInterval (0,1,Day) Then
      HWSpd1_max1min = 0
      HWDir1_max1min = 0
      HWTime1_max1min(4) = 0
      HWTime1_max1min(5) = 0

      HWSpd1Max24Hr=0
      HWDir1Max24Hr=0
      HW1Max24HrTime(4)=0  'hour
      HW1Max24HrTime(5)=0  'minute
      '
      HWSpd2Max24Hr=0
      HWDir2Max24Hr=0
      HW2Max24HrTime(4)=0  'hour
      HW2Max24HrTime(5)=0  'minute
      '
      HWSpd3Max24Hr=0
      HWDir3Max24Hr=0
      HW3Max24HrTime(4)=0  'hour
      HW3Max24HrTime(5)=0  'minute
      '
      HWSpd4Max24Hr=0
      HWDir4Max24Hr=0
      HW4Max24HrTime(4)=0  'hour
      HW4Max24HrTime(5)=0  'minute
      PrecipToday=0
      MaxGustToday=0
      '===============================================================

    EndIf
  NextScan
EndProg
