
'=================
'HEADER
'=================

'=================
'VARIABLES
'=================
'--------------
'header
'--------------
'###################################################################################
'##### Declare Variables ###########################################################
'###################################################################################
AngleDegrees     'program is expecting trig numbers in degress (as opposed to Radians)

Const PScan=3  'enter program execution interval in seconds
'--------------
'fuelm-10
'--------------
'CS506 Fuel Moisture Probe
'    Ground:  Clear
'    13H(SE 25):  Signal- Green
'    G:  Power Ground - Black
'    C5:  Control - Orange
'    12V:  Power (+) - Red
'
'Fuel Temp (107 Sensor)
'     13L(SE26):  Signal - Red
'    Ground:  Purple
'    Ground:  Clear
'    VX1:  Excitation -Black
Public FuelM10Hr_uS
Public FuelM10Hr_prct
Public FuelTempC
Units FuelM10Hr_uS=microSec
Units FuelM10Hr_prct=%
Units FuelTempC=DegC
'--------------
'rh-0
'--------------
'  RM Young 41382 #1 Air Temp & RH Sensor 0-1 V Output
'    4H: Air Temp Signal Red
'    4L: RH Signal Green
'    AG: Signal Reference Brown
'    +PWR: Power White
'    PWR REF: Power Ground Black
'    G: Shield Black
Public RH_pct1

'=================
'TABLES
'=================
'--------------
'header
'--------------
DataTable(Dat15min,True,-1)
  DataInterval(0,15,Min,10)
'--------------
'fuelm-10
'--------------
  Average (1,FuelM10Hr_prct,FP2,False)
  Average (1,FuelTempC,FP2,False)
'--------------
'rh-0
'--------------
  Average (1,RH_pct1,FP2,False)
EndTable
'--------------
'header
'--------------
DataTable(Dat24Hr,True,-1)
  DataInterval(0,24,Hr,10)
'--------------
'fuelm-10
'--------------
  Average (1,FuelM10Hr_prct,FP2,False)
  Minimum (1,FuelM10Hr_prct,FP2,False,False)
  Maximum (1,FuelM10Hr_prct,FP2,False,False)
  Average (1,FuelTempC,FP2,False)

'--------------
'rh-0
'--------------
  Average (1,RH_pct1,FP2,False)
EndTable

'=================
'SUBROUTINES
'=================

'=================
'MAIN
'=================
'--------------
'header
'--------------
BeginProg
  Scan(3,Sec,1,0)

'--------------
'basic
'--------------
    CallTable Dat15min
    CallTable Dat24Hr
'--------------
'fuelm-10
'--------------
    ' CS505 Fuel Moisture Sensor (constant power) measurements
    PortSet(5,1) ' Power on the fuel moisture sensor
    PeriodAvg(FuelM10Hr_uS,1,mV1000,25,0,0,100,10,1,0)
    PortSet(5,0)
    If FuelM10Hr_uS <= 17.7 Then
      FuelM10Hr_prct=7.6298*FuelM10Hr_uS-130.0904
    Else
      FuelM10Hr_prct=0.0406*FuelM10Hr_uS^2+3.7685*FuelM10Hr_uS-73.7974
    EndIf
    ' CS205 Fuel Temperature Sensor measurement
    Therm107 (FuelTempC,1,26,Vx1,0,_60Hz,1,0)
'--------------
'rh-0
'--------------
    VoltSe (RH_pct1,1,mV1000,8,1,0,250,.1,0)
'--------------
'footer
'--------------
  NextScan
EndProg
